def model TWorld as

  def comp environment as
    var time: millisecond {pub: out};
    var celltype: dimensionless {init: 0, pub: out};
    var sex: dimensionless {init: 0, pub: out};
  enddef;

  def comp multipliers as
    var INa_multiplier: dimensionless {init: 1, pub: out};
    var INaL_multiplier: dimensionless {init: 1, pub: out};
    var INab_multiplier: dimensionless {init: 1, pub: out};
    var INaK_multiplier: dimensionless {init: 1, pub: out};
    var IClCa_multiplier: dimensionless {init: 1, pub: out};
    var IClb_multiplier: dimensionless {init: 1, pub: out};
    var Itos_multiplier: dimensionless {init: 1, pub: out};
    var Itof_multiplier: dimensionless {init: 1, pub: out};
    var IKb_multiplier: dimensionless {init: 1, pub: out};
    var ICaLPCa_multiplier: dimensionless {init: 1, pub: out};
    var ICab_multiplier: dimensionless {init: 1, pub: out};
    var Jrel_multiplier: dimensionless {init: 1, pub: out};
    var Jup_multiplier: dimensionless {init: 1, pub: out};
    var INaCa_multiplier: dimensionless {init: 1, pub: out};
    var IKr_multiplier: dimensionless {init: 1, pub: out};
    var IKs_multiplier: dimensionless {init: 1, pub: out};
    var IK1_multiplier: dimensionless {init: 1, pub: out};
    var IpCa_multiplier: dimensionless {init: 1, pub: out};
  enddef;

  def comp cell_geometry as
    var cellLength: micrometer {init: 100};
    var cellRadius: micrometer {init: 10.25};
    var vcell: liter {pub: out};
    var vmyo: liter {pub: out};
    var vsr: liter {pub: out};
    var vsl: liter {pub: out};
    var vjunc: liter {pub: out};
    vcell = 1e-15{liter_per_micrometer_cubed}*pi*sqr(cellRadius)*cellLength;
    vmyo = 0.65{dimensionless}*vcell;
    vsr = 0.035{dimensionless}*vcell;
    vsl = 0.02{dimensionless}*vcell;
    vjunc = 5.39e-4{dimensionless}*vcell;
  enddef;

  def comp extracellular as
    var nao: millimolar {init: 140.0, pub: out};
    var cao: millimolar {init: 1.8, pub: out};
    var ko: millimolar {init: 5.0, pub: out};
    var clo: millimolar {init: 150.0, pub: out};
  enddef;

  def comp physical_constants as
    var R: joule_per_kilomole_kelvin {init: 8314, pub: out};
    var T: kelvin {init: 310, pub: out};
    var F: coulomb_per_mole {init: 96485, pub: out};
    var Qpow: dimensionless {pub: out};
    var zna: dimensionless {init: 1, pub: out};
    var zca: dimensionless {init: 2, pub: out};
    var zk: dimensionless {init: 1, pub: out};
    var zcl: dimensionless {init: -1, pub: out};
    Qpow = (T-310{dimensionless})/10{dimensionless};
  enddef;

  def comp reversal_potentials as
    var PNaK: dimensionless {init: 0.01833};
    var ENaj: millivolt {pub: out};
    var ENasl: millivolt {pub: out};
    var EK: millivolt {pub: out};
    var EKs: millivolt {pub: out};
    var ECl: millivolt {pub: out};
    var ECaj: millivolt {pub: out};
    var ECasl: millivolt {pub: out};
    var nao: millimolar {pub: in};
    var nai: millimolar {pub: in};
    var naj: millimolar {pub: in};
    var nasl: millimolar {pub: in};
    var cao: millimolar {pub: in};
    var caj: millimolar {pub: in};
    var casl: millimolar {pub: in};
    var ko: millimolar {pub: in};
    var ki: millimolar {pub: in};
    var clo: millimolar {pub: in};
    var cli: millimolar {pub: in};
    var zna: dimensionless {pub: in};
    var zca: dimensionless {pub: in};
    var zk: dimensionless {pub: in};
    var zcl: dimensionless {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    ENaj = R*T/(zna*F)*ln(nao/naj);
    ENasl = R*T/(zna*F)*ln(nao/nasl);
    EK = R*T/(zk*F)*ln(ko/ki);
    EKs = R*T/(zk*F)*ln((ko+PNaK*nao)/(ki+PNaK*nai));
    ECl = R*T/(zcl*F)*ln(clo/cli);
    ECaj = R*T/(zca*F)*ln(cao/caj);
    ECasl = R*T/(zca*F)*ln(cao/casl);
  enddef;

  def comp TWorld_v2_membrane_type as
    var time: millisecond {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var I_tot: microA_per_microF {pub: in};
    var Cmem: farad {pub: in};
    var v: millivolt {pub: in};
    var vffrt: coulomb_per_mole {pub: out};
    var vfrt: dimensionless {pub: out};
    var Fjunc: dimensionless {pub: in};
    var Fsl: dimensionless {pub: out};
    var Istim: microA_per_microF {pub: out};
    var i_Stim_Start: millisecond {pub: in};
    var i_Stim_end: millisecond {pub: in};
    var i_Stim_Amplitude: microA_per_microF {pub: in};
    var i_Stim_Period: millisecond {pub: in};
    var i_Stim_PulseDuration: millisecond {pub: in};
    Fsl = 1.0{dimensionless}-Fjunc;
    Istim = sel
      case (time < i_Stim_end) and (time >= i_Stim_Start) and (time-i_Stim_Start-floor((time-i_Stim_Start)/i_Stim_Period)*i_Stim_Period <= i_Stim_PulseDuration):
        i_Stim_Amplitude;
      otherwise:
        0{microA_per_microF};
    endsel;
    vffrt = v*F*F/(R*T);
    vfrt = v*F/(R*T);
    ode(v, time) = -I_tot;
  enddef;

  def comp CaMK as
    var time: millisecond {pub: in};
    var caj: millimolar {pub: in};
    var Whole_cell_PP1: dimensionless {init: 0.13698};
    var PP1_tot: dimensionless;
    var camk_trap: millimolar {init: 0.0414775695414329};
    var CaMK0: dimensionless {init: 0.1};
    var Km_CaMK_Ca: millimolar {init: 0.0075};
    var bound: millimolar;
    var CaMK_active: millimolar;
    var alpha: per_millimolar_per_millisecond {init: 0.05};
    var beta: per_millisecond {init: 6.8e-4};
    var tau_plb: millisecond {init: 100000};
    var tau_ryr: millisecond {init: 10000};
    var tau_cal: millisecond;
    var K_Phos_CaMK: millimolar {init: 0.35};
    var CaMK_Phos_ss_ICaL: dimensionless;
    var CaMK_Phos_ss_RyR: dimensionless;
    var CaMK_Phos_ss_PLB: dimensionless;
    var camk_f_ICaL: dimensionless {init: 0.149310462149601, pub: out};
    var camk_f_RyR: dimensionless {init: 0.0583425856770706, pub: out};
    var camk_f_PLB: dimensionless {init: 0.0102519516890396, pub: out};
    var alpha_serca: per_millimolar_per_millisecond {init: 0.05};
    var bound_serca: millimolar;
    var casig_serca_trap: millimolar {init: 0.0414775695414004, pub: out};
    var casig_SERCA_act: millimolar {pub: out};
    PP1_tot = Whole_cell_PP1;
    bound = CaMK0*(1{millimolar}-camk_trap)/(1{dimensionless}+Km_CaMK_Ca/caj);
    CaMK_active = bound+camk_trap;
    ode(camk_trap, time) = alpha*bound*CaMK_active-beta*camk_trap*(0.1{dimensionless}+0.9{dimensionless}*PP1_tot/0.1371{dimensionless});
    tau_cal = tau_ryr;
    CaMK_Phos_ss_ICaL = CaMK_active/(CaMK_active+K_Phos_CaMK);
    CaMK_Phos_ss_RyR = CaMK_active/(CaMK_active+1{millimolar});
    CaMK_Phos_ss_PLB = CaMK_active/(CaMK_active+10{millimolar});
    ode(camk_f_ICaL, time) = (CaMK_Phos_ss_ICaL-camk_f_ICaL)/tau_cal;
    ode(camk_f_RyR, time) = (CaMK_Phos_ss_RyR-camk_f_RyR)/tau_ryr;
    ode(camk_f_PLB, time) = (CaMK_Phos_ss_PLB-camk_f_PLB)/tau_plb;
    bound_serca = CaMK0*(1{millimolar}-casig_serca_trap)/(1{dimensionless}+Km_CaMK_Ca/caj);
    casig_SERCA_act = bound_serca+casig_serca_trap;
    ode(casig_serca_trap, time) = alpha_serca*bound_serca*casig_SERCA_act-beta*casig_serca_trap*(0.1{dimensionless}+0.9{dimensionless}*PP1_tot/0.1371{dimensionless});
  enddef;

  def comp intracellular_ions as
    var time: millisecond {pub: in};
    var sex: dimensionless {pub: in};
    var Cmem: farad {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var vmyo: liter {pub: in};
    var vjunc: liter {pub: in};
    var vsl: liter {pub: in};
    var vsr: liter {pub: in};
    var d_contraction_Ca_TRPN: per_millisecond {pub: in};
    var Jserca: millimolar_per_millisecond {pub: in};
    var J_SRCarel: millimolar_per_millisecond {pub: in};
    var J_SRleak: millimolar_per_millisecond {pub: in};
    var INaj: microA_per_microF {pub: in};
    var INasl: microA_per_microF {pub: in};
    var INaLj: microA_per_microF {pub: in};
    var INaLsl: microA_per_microF {pub: in};
    var INabj: microA_per_microF {pub: in};
    var INabsl: microA_per_microF {pub: in};
    var INaCa_ss: microA_per_microF {pub: in};
    var INaCa_i: microA_per_microF {pub: in};
    var INaK: microA_per_microF {pub: in};
    var INaKj: microA_per_microF {pub: in};
    var INaKsl: microA_per_microF {pub: in};
    var Ito: microA_per_microF {pub: in};
    var IKr: microA_per_microF {pub: in};
    var IKs: microA_per_microF {pub: in};
    var IK1: microA_per_microF {pub: in};
    var ICaK: microA_per_microF {pub: in};
    var IKb: microA_per_microF {pub: in};
    var Istim: microA_per_microF {pub: in};
    var IClCa: microA_per_microF {pub: in};
    var IClb: microA_per_microF {pub: in};
    var ICaL_junc: microA_per_microF {pub: in};
    var ICaL_sl: microA_per_microF {pub: in};
    var ICaNa_junc: microA_per_microF {pub: in};
    var ICaNa_sl: microA_per_microF {pub: in};
    var ICab_junc: microA_per_microF {pub: in};
    var ICab_sl: microA_per_microF {pub: in};
    var IpCa_junc: microA_per_microF {pub: in};
    var IpCa_sl: microA_per_microF {pub: in};
    var kon_na: per_millimolar_per_millisecond {init: 1e-4};
    var koff_na: per_millisecond {init: 1e-3};
    var kon_tnchca: per_millimolar_per_millisecond {init: 2.37};
    var koff_tnchca: per_millisecond {init: 3.2e-5};
    var kon_tnchmg: per_millimolar_per_millisecond {init: 3e-3};
    var koff_tnchmg: per_millisecond {init: 3.33e-3};
    var kon_cam: per_millimolar_per_millisecond {init: 34};
    var koff_cam: per_millisecond {init: 0.238};
    var kon_myoca: per_millimolar_per_millisecond {init: 13.8};
    var koff_myoca: per_millisecond {init: 4.6e-4};
    var kon_myomg: per_millimolar_per_millisecond {init: 0.0157};
    var koff_myomg: per_millisecond {init: 5.7e-5};
    var kon_sr: per_millimolar_per_millisecond {init: 100};
    var koff_sr: per_millisecond {init: 0.06};
    var kon_sll: per_millimolar_per_millisecond {init: 100};
    var koff_sll: per_millisecond {init: 1.3};
    var kon_slh: per_millimolar_per_millisecond {init: 100};
    var koff_slh: per_millisecond {init: 0.03};
    var kon_csqn: per_millimolar_per_millisecond {init: 100};
    var koff_csqn: per_millisecond {init: 65};
    var Bmax_Naj: millimolar {init: 7.561};
    var Bmax_Nasl: millimolar {init: 1.65};
    var Bmax_TnClow: millimolar {init: 0.07};
    var Bmax_TnChigh: millimolar {init: 0.14};
    var Bmax_CaM: millimolar;
    var Bmax_myosin: millimolar {init: 0.14};
    var Bmax_SR: millimolar {init: 0.01785854};
    var Bmax_SLlowj: millimolar;
    var Bmax_SLlowsl: millimolar;
    var Bmax_SLhighj: millimolar;
    var Bmax_SLhighsl: millimolar;
    var Bmax_Csqn: millimolar;
    var buffers_NaBj: millimolar {init: 3.5588839934477};
    var buffers_NaBsl: millimolar {init: 0.776467094025442};
    var buffers_TnClow: millimolar {init: 0.0104491410305814};
    var buffers_TnCHc: millimolar {init: 0.124415836833344};
    var buffers_TnCHm: millimolar {init: 0.00475139089328611};
    var buffers_CaM: millimolar {init: 0.000326761159683871};
    var buffers_Myosin_ca: millimolar {init: 0.00435725142843641};
    var buffers_Myosin_mg: millimolar {init: 0.134587917639655};
    var buffers_SRB: millimolar {init: 0.00247759889601234};
    var buffers_SLLj: millimolar {init: 0.00415486833433121};
    var buffers_SLLsl: millimolar {init: 0.00810233315864154};
    var buffers_SLHj: millimolar {init: 0.0497605868295565};
    var buffers_SLHsl: millimolar {init: 0.0960185900338078};
    var buffers_Csqn: millimolar {init: 1.32358809148372};
    var d_buffers_NaBj: millimolar_per_millisecond;
    var d_buffers_NaBsl: millimolar_per_millisecond;
    var d_buffers_TnClow: millimolar_per_millisecond;
    var d_buffers_TnCHc: millimolar_per_millisecond;
    var d_buffers_CaM: millimolar_per_millisecond;
    var d_buffers_Myosin_ca: millimolar_per_millisecond;
    var d_buffers_SRB: millimolar_per_millisecond;
    var d_buffers_SLLj: millimolar_per_millisecond;
    var d_buffers_SLHj: millimolar_per_millisecond;
    var d_buffers_SLLsl: millimolar_per_millisecond;
    var d_buffers_SLHsl: millimolar_per_millisecond;
    var d_buffers_Csqn: millimolar_per_millisecond;
    var J_CaB_cytosol: millimolar_per_millisecond;
    var J_CaB_junction: millimolar_per_millisecond;
    var J_CaB_sl: millimolar_per_millisecond;
    var J_na_juncsl: millimolar_per_millisecond {init: 1.831278232206080e-14};
    var J_na_slmyo: millimolar_per_millisecond {init: 1.638627922219794e-12};
    var J_ca_juncsl: millimolar_per_millisecond {init: 3.260674633581688e-13};
    var J_ca_slmyo: millimolar_per_millisecond {init: 1.341273673480337e-11};
    var naj: millimolar {init: 8.88424477947199, pub: out};
    var nasl: millimolar {init: 8.88341217642103, pub: out};
    var nai: millimolar {init: 8.88365804124162, pub: out};
    var mgi: millimolar {init: 0.5};
    var ki: millimolar {init: 134.213097948672, pub: out};
    var cli: millimolar {init: 15.5745509675962, pub: out};
    var casr: millimolar {init: 0.709622552333155, pub: out};
    var caj: millimolar {init: 9.20580586542242e-5, pub: out};
    var casl: millimolar {init: 9.62428218317655e-5, pub: out};
    var cai: millimolar {init: 9.66105402693763e-5, pub: out};
    var INa_tot_junc: microA_per_microF;
    var INa_tot_sl: microA_per_microF;
    var IK_tot: microA_per_microF;
    var ICl_tot: microA_per_microF;
    var ICa_tot_junc: microA_per_microF;
    var ICa_tot_sl: microA_per_microF;
    var I_tot: microA_per_microF {pub: out};
    Bmax_CaM = sel
      case sex == 1{dimensionless}:
        0.024{millimolar}/1.1{dimensionless};
      case sex == 2{dimensionless}:
        0.024{millimolar}*1.1{dimensionless};
      otherwise:
        0.024{millimolar};
    endsel;
    d_buffers_NaBj = kon_na*naj*(Bmax_Naj-buffers_NaBj)-koff_na*buffers_NaBj;
    ode(buffers_NaBj, time) = d_buffers_NaBj;
    d_buffers_NaBsl = kon_na*nasl*(Bmax_Nasl-buffers_NaBsl)-koff_na*buffers_NaBsl;
    ode(buffers_NaBsl, time) = d_buffers_NaBsl;
    d_buffers_TnClow = Bmax_TnClow*d_contraction_Ca_TRPN;
    ode(buffers_TnClow, time) = d_buffers_TnClow;
    d_buffers_TnCHc = kon_tnchca*cai*(Bmax_TnChigh-buffers_TnCHc-buffers_TnCHm)-koff_tnchca*buffers_TnCHc;
    ode(buffers_TnCHc, time) = d_buffers_TnCHc;
    ode(buffers_TnCHm, time) = kon_tnchmg*mgi*(Bmax_TnChigh-buffers_TnCHc-buffers_TnCHm)-koff_tnchmg*buffers_TnCHm;
    d_buffers_CaM = kon_cam*cai*(Bmax_CaM-buffers_CaM)-koff_cam*buffers_CaM;
    ode(buffers_CaM, time) = d_buffers_CaM;
    d_buffers_Myosin_ca = kon_myoca*cai*(Bmax_myosin-buffers_Myosin_ca-buffers_Myosin_mg)-koff_myoca*buffers_Myosin_ca;
    ode(buffers_Myosin_ca, time) = d_buffers_Myosin_ca;
    ode(buffers_Myosin_mg, time) = kon_myomg*mgi*(Bmax_myosin-buffers_Myosin_ca-buffers_Myosin_mg)-koff_myomg*buffers_Myosin_mg;
    d_buffers_SRB = kon_sr*cai*(Bmax_SR-buffers_SRB)-koff_sr*buffers_SRB;
    ode(buffers_SRB, time) = d_buffers_SRB;
    Bmax_SLlowj = 4.89983e-4{millimolar}*vmyo/vjunc;
    Bmax_SLlowsl = 3.3923e-2{millimolar}*vmyo/vsl;
    Bmax_SLhighj = 1.75755e-4{millimolar}*vmyo/vjunc;
    Bmax_SLhighsl = 1.215423e-2{millimolar}*vmyo/vsl;
    Bmax_Csqn = 1.3655214e-1{millimolar}*vmyo/vsr;
    d_buffers_SLLj = kon_sll*caj*(Bmax_SLlowj-buffers_SLLj)-koff_sll*buffers_SLLj;
    ode(buffers_SLLj, time) = d_buffers_SLLj;
    d_buffers_SLLsl = kon_sll*casl*(Bmax_SLlowsl-buffers_SLLsl)-koff_sll*buffers_SLLsl;
    ode(buffers_SLLsl, time) = d_buffers_SLLsl;
    d_buffers_SLHj = kon_slh*caj*(Bmax_SLhighj-buffers_SLHj)-koff_slh*buffers_SLHj;
    ode(buffers_SLHj, time) = d_buffers_SLHj;
    d_buffers_SLHsl = kon_slh*casl*(Bmax_SLhighsl-buffers_SLHsl)-koff_slh*buffers_SLHsl;
    ode(buffers_SLHsl, time) = d_buffers_SLHsl;
    d_buffers_Csqn = kon_csqn*casr*(Bmax_Csqn-buffers_Csqn)-koff_csqn*buffers_Csqn;
    ode(buffers_Csqn, time) = d_buffers_Csqn;
    J_CaB_cytosol = d_buffers_TnClow+d_buffers_TnCHc+d_buffers_CaM+d_buffers_Myosin_ca+d_buffers_SRB;
    J_CaB_junction = d_buffers_SLLj+d_buffers_SLHj;
    J_CaB_sl = d_buffers_SLLsl+d_buffers_SLHsl;
    ode(casr, time) = Jserca-(J_SRleak*vmyo/vsr+J_SRCarel)-d_buffers_Csqn;
    INa_tot_junc = INaj+INaLj+INabj+3{dimensionless}*INaCa_ss+3{dimensionless}*INaKj+ICaNa_junc;
    INa_tot_sl = INasl+INaLsl+INabsl+3{dimensionless}*INaCa_i+3{dimensionless}*INaKsl+ICaNa_sl;
    ode(naj, time) = -INa_tot_junc*Cmem/(vjunc*F)+J_na_juncsl/vjunc*(nasl-naj)-d_buffers_NaBj;
    ode(nasl, time) = -INa_tot_sl*Cmem/(vsl*F)+J_na_juncsl/vsl*(naj-nasl)+J_na_slmyo/vsl*(nai-nasl)-d_buffers_NaBsl;
    ode(nai, time) = J_na_slmyo/vmyo*(nasl-nai);
    IK_tot = Ito+IKr+IKs+IK1-2{dimensionless}*INaK+ICaK+IKb+Istim;
    ode(ki, time) = -IK_tot*Cmem/(vmyo*F);
    ICl_tot = IClCa+IClb;
    ode(cli, time) = ICl_tot*Cmem/(vmyo*F);
    ICa_tot_junc = ICaL_junc+ICab_junc+IpCa_junc-2{dimensionless}*INaCa_ss;
    ICa_tot_sl = ICaL_sl+ICab_sl+IpCa_sl-2{dimensionless}*INaCa_i;
    ode(caj, time) = -ICa_tot_junc*Cmem/(vjunc*2{dimensionless}*F)+J_ca_juncsl/vjunc*(casl-caj)-J_CaB_junction+J_SRCarel*vsr/vjunc+J_SRleak*vmyo/vjunc;
    ode(casl, time) = -ICa_tot_sl*Cmem/(vsl*2{dimensionless}*F)+J_ca_juncsl/vsl*(caj-casl)+J_ca_slmyo/vsl*(cai-casl)-J_CaB_sl;
    ode(cai, time) = -Jserca*vsr/vmyo-J_CaB_cytosol+J_ca_slmyo/vmyo*(casl-cai);
    I_tot = INa_tot_junc+INa_tot_sl+ICa_tot_junc+ICa_tot_sl+IK_tot+ICl_tot;
  enddef;

  def comp INa as
    var GNa_b: milliS_per_microF {init: 22.08788};
    var INa_multiplier: dimensionless {pub: in};
    var GNa: milliS_per_microF;
    var GNa_P: milliS_per_microF;
    var mss: dimensionless;
    var tm: millisecond {pub: out};
    var m: dimensionless {init: 0.00115997496446638};
    var hss: dimensionless;
    var ah: dimensionless;
    var bh: dimensionless;
    var th: millisecond;
    var h: dimensionless {init: 0.791660456106286};
    var jss: dimensionless;
    var aj: dimensionless;
    var bj: dimensionless;
    var tj: millisecond;
    var j: dimensionless {init: 0.791587530878068};
    var hssp: dimensionless;
    var hp: dimensionless {init: 0.61240980788246};
    var tjp: millisecond;
    var jp: dimensionless {init: 0.791052149435449};
    var mss_P: dimensionless;
    var m_P: dimensionless {init: 0.0033402868342183};
    var hss_P: dimensionless;
    var h_P: dimensionless {init: 0.647375310489836};
    var jss_P: dimensionless;
    var j_P: dimensionless {init: 0.647279109941897};
    var hssp_P: dimensionless;
    var hp_P: dimensionless {init: 0.419158183843564};
    var jssp_P: dimensionless;
    var jp_P: dimensionless {init: 0.418669666153646};
    var camk_f_RyR: dimensionless {pub: in};
    var fINap: dimensionless;
    var fINa_PKA: dimensionless {pub: in};
    var fINa_P: dimensionless;
    var fINa_BP: dimensionless;
    var fINa_CaMKonly: dimensionless;
    var fINa_PKAonly: dimensionless;
    var INaBase_NP: milliS_per_microF;
    var INaBase_CaMK: milliS_per_microF;
    var INaBase_PKA: milliS_per_microF;
    var INaBase_BP: milliS_per_microF;
    var INaBase: milliS_per_microF;
    var time: millisecond {pub: in};
    var v: millivolt {pub: in};
    var ENaj: millivolt {pub: in};
    var ENasl: millivolt {pub: in};
    var Fjunc: dimensionless {pub: in};
    var Fsl: dimensionless {pub: in};
    var INaj: microA_per_microF {pub: out};
    var INasl: microA_per_microF {pub: out};
    var INa: microA_per_microF {pub: out};
    fINap = camk_f_RyR;
    GNa = GNa_b*INa_multiplier;
    GNa_P = 1.25{dimensionless}*GNa;
    mss = 1{dimensionless}/sqr(1{dimensionless}+exp(-(v+56.86{millivolt})/9.03{millivolt}));
    tm = 0.1292{millisecond}*exp(-sqr((v+45.79{millivolt})/15.54{millivolt}))+0.06487{millisecond}*exp(-sqr((v-4.823{millivolt})/51.12{millivolt}));
    ode(m, time) = (mss-m)/tm;
    ah = sel
      case v >= -40{millivolt}:
        0{dimensionless};
      otherwise:
        0.057{dimensionless}*exp(-(v+80{millivolt})/6.8{millivolt});
    endsel;
    bh = sel
      case v >= -40{millivolt}:
        0.77{dimensionless}/(0.13{dimensionless}*(1{dimensionless}+exp(-(v+10.66{millivolt})/11.1{millivolt})));
      otherwise:
        2.7{dimensionless}*exp(0.079{per_millivolt}*v)+3.1e5{dimensionless}*exp(0.3485{per_millivolt}*v);
    endsel;
    hss = 1{dimensionless}/sqr(1{dimensionless}+exp((v+71.55{millivolt})/7.43{millivolt}));
    th = 1{millisecond}/(ah+bh);
    ode(h, time) = (hss-h)/th;
    aj = sel
      case v >= -40{millivolt}:
        0{dimensionless};
      otherwise:
        (-2.5428e4{per_millivolt}*exp(0.2444{per_millivolt}*v)-6.948e-6{per_millivolt}*exp(-0.04391{per_millivolt}*v))*(v+37.78{millivolt})/(1{dimensionless}+exp(0.311{per_millivolt}*(v+79.23{millivolt})));
    endsel;
    bj = sel
      case v >= -40{millivolt}:
        0.6{dimensionless}*exp(0.057{per_millivolt}*v)/(1{dimensionless}+exp(-0.1{per_millivolt}*(v+32{millivolt})));
      otherwise:
        0.02424{dimensionless}*exp(-0.01052{per_millivolt}*v)/(1{dimensionless}+exp(-0.1378{per_millivolt}*(v+40.14{millivolt})));
    endsel;
    jss = hss;
    tj = 1{millisecond}/(aj+bj);
    ode(j, time) = (jss-j)/tj;
    hssp = 1{dimensionless}/sqr(1{dimensionless}+exp((v+77.55{millivolt})/7.43{millivolt}));
    ode(hp, time) = (hssp-hp)/th;
    tjp = 1.46{dimensionless}*tj;
    ode(jp, time) = (jss-jp)/tjp;
    mss_P = 1{dimensionless}/sqr(1{dimensionles}+exp(-(v+61.86{millivolt})/9.03{millivolt}));
    ode(m_P, time) = (mss_P-m_P)/tm;
    hss_P = 1{dimensionless}/sqr(1{dimensionless}+exp((v+76.55{millivolt})/7.43{millivolt}));
    ode(h_P, time) = (hss_P-h_P)/th;
    jss_P = hss_P;
    ode(j_P, time) = (jss_P-j_P)/tj;
    hssp_P = 1{dimensionless}/sqr(1{dimensionless}+exp((v+82.55{millivolt})/7.43{millivolt}));
    ode(hp_P, time) = (hssp_P-hp_P)/th;
    jssp_P = hssp_P;
    ode(jp_P, time) = (jssp_P-jp_P)/tjp;
    fINa_P = fINa_PKA;
    fINa_BP = fINap*fINa_P;
    fINa_CaMKonly = fINap-fINa_BP;
    fINa_PKAonly = fINa_P-fINa_BP;
    INaBase_NP = GNa*pow(m, 3.0{dimensionless})*h*j;
    INaBase_CaMK = GNa*pow(m, 3.0{dimensionless})*hp*jp;
    INaBase_PKA = GNa_P*pow(m_P, 3.0{dimensionless})*h_P*j_P;
    INaBase_BP = GNa_P*pow(m_P, 3.0{dimensionless})*hp_P*jp_P;
    INaBase = (1{dimensionless}-fINa_CaMKonly-fINa_PKAonly-fINa_BP)*INaBase_NP+fINa_CaMKonly*INaBase_CaMK+fINa_PKAonly*INaBase_PKA+fINa_BP*INaBase_BP;
    INaj = Fjunc*INaBase*(v-ENaj);
    INasl = Fsl*INaBase*(v-ENasl);
    INa = INaj+INasl;
  enddef;

  def comp INaL as
    var GNaL_b: milliS_per_microF {init: 0.04229};
    var INaL_multiplier: dimensionless {pub: in};
    var GNaL: milliS_per_microF;
    var mLss: dimensionless;
    var tmL: millisecond;
    var mL: dimensionless {init: 0.000224902633151066};
    var thL: millisecond {init: 145};
    var hLss: dimensionless;
    var v: millivolt {pub: in};
    var hL: dimensionless {init: 0.478572465113524};
    var hLssp: dimensionless;
    var thLp: millisecond;
    var hLp: dimensionless {init: 0.258793079229038};
    var camk_f_RyR: dimensionless {pub: in};
    var fINaLp: dimensionless;
    var ENaj: millivolt {pub: in};
    var ENasl: millivolt {pub: in};
    var INaL: microA_per_microF {pub: out};
    var INaLj: microA_per_microF {pub: out};
    var INaLsl: microA_per_microF {pub: out};
    var celltype: dimensionless {pub: in};
    var time: millisecond {pub: in};
    var Fjunc: dimensionless {pub: in};
    var Fsl: dimensionless {pub: in};
    fINaLp = camk_f_RyR;
    GNaL = sel
      case celltype == 1{dimensionless}:
        GNaL_b*INaL_multiplier*(1{dimensionless}+fINaLp)*0.7{dimensionless};
      otherwise:
        GNaL_b*INaL_multiplier*(1{dimensionless}+fINaLp);
    endsel;
    mLss = 1{dimensionless}/(1{dimensionless}+exp(-(v+42.85{millivolt})/5.264{millivolt}));
    tmL = 0.1292{millisecond}*exp(-sqr((v+45.79{millivolt})/15.54{millivolt}))+0.06487{millisecond}*exp(-sqr((v-4.823{millivolt})/51.12{millivolt}));
    ode(mL, time) = (mLss-mL)/tmL;
    hLss = 1{dimensionless}/(1{dimensionless}+exp((v+87.61{millivolt})/7.488{millivolt}));
    ode(hL, time) = (hLss-hL)/thL;
    hLssp = 1{dimensionless}/(1{dimensionless}+exp((v+93.81{millivolt})/7.488{millivolt}));
    thLp = 3{dimensionless}*thL;
    ode(hLp, time) = (hLssp-hLp)/thLp;
    INaLj = Fjunc*GNaL*(v-ENaj)*mL*((1{dimensionless}-fINaLp)*hL+fINaLp*hLp);
    INaLsl = Fsl*GNaL*(v-ENasl)*mL*((1{dimensionless}-fINaLp)*hL+fINaLp*hLp);
    INaL = INaLj+INaLsl;
  enddef;

  def comp ICaL as
    var celltype: dimensionless {pub: in};
    var time: millisecond {pub: in};
    var T: kelvin {pub: in};
    var v: millivolt {pub: in};
    var vffrt: coulomb_per_mole {pub: in};
    var vfrt: dimensionless {pub: in};
    var cao: millimolar {pub: in};
    var cai: millimolar {pub: in};
    var caj: millimolar {pub: in};
    var casl: millimolar {pub: in};
    var nao: millimolar {pub: in};
    var nai: millimolar {pub: in};
    var nasl: millimolar {pub: in};
    var ko: millimolar {pub: in};
    var ki: millimolar {pub: in};
    var clo: millimolar {pub: in};
    var cli: millimolar {pub: in};
    var camk_f_ICaL: dimensionless {pub: in};
    var fICaLp: dimensionless;
    var fICaLP: dimensionless;
    var fICaL_PKA: dimensionless {pub: in};
    var dss: dimensionless;
    var td: millisecond;
    var d: dimensionless {init: 6.00992839633468e-26};
    var fss: dimensionless;
    var tff: millisecond;
    var tfs: millisecond;
    var Aff: dimensionless {init: 0.52477};
    var Afs: dimensionless;
    var ff: dimensionless {init: 0.999999988243592};
    var fs: dimensionless {init: 0.911094950010905};
    var f: dimensionless;
    var fcass: dimensionless;
    var tfcaf: millisecond;
    var tfcas: millisecond;
    var Afcaf: dimensionless;
    var Afcas: dimensionless;
    var fcaf: dimensionless {init: 0.999999988251085};
    var fcas: dimensionless {init: 0.991477881027689};
    var fca: dimensionless;
    var tjca: millisecond {init: 66.0};
    var jcass: dimensionless;
    var jca: dimensionless {init: 0.999993204834445};
    var tffp: millisecond;
    var ffp: dimensionless {init: 0.999999987868131};
    var fp: dimensionless;
    var tfcafp: millisecond;
    var fcafp: dimensionless {init: 0.999999987980701};
    var Kmn: millimolar {init: 0.00222};
    var fcap: dimensionless;
    var k2n: per_millisecond {init: 957.85903};
    var km2n: per_millisecond;
    var anca: dimensionless;
    var nca: dimensionless {init: 0.00528788208273223};
    var anca_i: dimensionless;
    var nca_i: dimensionless {init: 0.00621547539490541};
    var Io: dimensionless;
    var Iss: dimensionless;
    var Ii: dimensionless;
    var dielConstant: per_kelvin {init: 74};
    var constA: dimensionless;
    var gamma_cao: dimensionless;
    var gamma_cass: dimensionless;
    var gamma_cai: dimensionless;
    var gamma_nao: dimensionless;
    var gamma_nass: dimensionless;
    var gamma_nai: dimensionless;
    var gamma_ko: dimensionless;
    var gamma_kss: dimensionless;
    var gamma_ki: dimensionless;
    var PhiCaL_ss: dimensionless;
    var PhiCaNa_ss: dimensionless;
    var PhiCaK_ss: dimensionless;
    var PhiCaL_i: dimensionless;
    var PhiCaNa_i: dimensionless;
    var PhiCaK_i: dimensionless;
    var PCa_b: dimensionless {init: 1.5768e-04};
    var ICaLPCa_multiplier: dimensionless {pub: in};
    var PCa: dimensionless;
    var PCap: dimensionless;
    var PCaNa: dimensionless;
    var PCaK: dimensionless;
    var PCaNap: dimensionless;
    var PCaKp: dimensionless;
    var dPss: dimensionless;
    var d_P: dimensionless {init: 0.0};
    var fss_P: dimensionless;
    var ff_P: dimensionless {init: 0.999999987992091};
    var fs_P: dimensionless {init: 0.930411822666439};
    var fcass_P: dimensionless;
    var fcaf_P: dimensionless {init: 0.999999987985882};
    var fcas_P: dimensionless {init: 0.999145398038995};
    var f_P: dimensionless;
    var fcap_P: dimensionless;
    var PCa_Pb: dimensionless;
    var PCa_P: dimensionless;
    var PCaNa_P: dimensionless;
    var PCaK_P: dimensionless;
    var fBPss: dimensionless;
    var fBPf: dimensionless {init: 0.999999987992091};
    var fBP: dimensionless;
    var fcaBPss: dimensionless;
    var fcaBPf: dimensionless {init: 0.999999987985882};
    var fcaBP: dimensionless;
    var fICaL_P: dimensionless;
    var fICaL_BP: dimensionless;
    var fICaL_CaMKonly: dimensionless;
    var fICaL_PKAonly: dimensionless;
    var ICaL_ss_NP: microA_per_microF;
    var ICaL_ss_CaMK: microA_per_microF;
    var ICaL_ss_PKA: microA_per_microF;
    var ICaL_ss_BP: microA_per_microF;
    var ICaL_i_NP: microA_per_microF;
    var ICaL_i_CaMK: microA_per_microF;
    var ICaL_i_PKA: microA_per_microF;
    var ICaL_i_BP: microA_per_microF;
    var ICaNa_ss_NP: microA_per_microF;
    var ICaNa_ss_CaMK: microA_per_microF;
    var ICaNa_ss_PKA: microA_per_microF;
    var ICaNa_ss_BP: microA_per_microF;
    var ICaNa_i_NP: microA_per_microF;
    var ICaNa_i_CaMK: microA_per_microF;
    var ICaNa_i_PKA: microA_per_microF;
    var ICaNa_i_BP: microA_per_microF;
    var ICaK_ss_NP: microA_per_microF;
    var ICaK_ss_CaMK: microA_per_microF;
    var ICaK_ss_PKA: microA_per_microF;
    var ICaK_ss_BP: microA_per_microF;
    var ICaK_i_NP: microA_per_microF;
    var ICaK_i_CaMK: microA_per_microF;
    var ICaK_i_PKA: microA_per_microF;
    var ICaK_i_BP: microA_per_microF;
    var ICaL_fractionSS: dimensionless {init: 0.8};
    var sigmoidTransition: dimensionless;
    var tauTransition: millisecond;
    var rateRecovery: per_millisecond {init: 0.02313};
    var ical_pureCDI_junc: dimensionless {init: 0.99834227586449};
    var sigmoidTransition2: dimensionless;
    var tauTransition2: millisecond;
    var ical_pureCDI_sl: dimensionless {init: 0.99826318591148};
    var ICaL: microA_per_microF {pub: out};
    var ICaL_junc: microA_per_microF {pub: out};
    var ICaL_sl: microA_per_microF {pub: out};
    var ICaNa: microA_per_microF {pub: out};
    var ICaNa_junc: microA_per_microF {pub: out};
    var ICaNa_sl: microA_per_microF {pub: out};
    var ICaK: microA_per_microF {pub: out};
    var ICaK_junc: microA_per_microF;
    var ICaK_sl: microA_per_microF;
    var ICa_tot: microA_per_microF {pub: out};
    fICaLp = camk_f_ICaL;
    fICaLP = fICaL_PKA;
    dss = min(1.0763{dimensionless}*exp(-1.0070{dimensionless}*exp(-0.0829{per_millivolt}*(v+3.62483{millivolt}))), 1{dimensionless});
    td = 1.5{millisecond}+1{millisecond}/(exp(-0.05{per_millivolt}*(v+6{millivolt}))+exp(0.09{per_millivolt}*(v+14{millivolt})));
    ode(d, time) = (dss-d)/td;
    fss = 1{dimensionless}/(1{dimensionless}+exp((v+19.58{millivolt})/3.696{millivolt}));
    tff = 6.17111{millisecond}+1{millisecond}/(0.00126{dimensionless}*exp(-(v+26.63596{millivolt})/9.69961{millivolt})+0.00126{dimensionless}*exp((v+26.63596{millivolt})/9.69961{millivolt}));
    tfs = 2719.22489{millisecond}+1{millisecond}/(7.19411e-5{dimensionless}*exp(-(v+5.74631{millivolt})/10.8769{millivolt})+7.19411e-5{dimensionless}*exp((v+5.74631{millivolt})/16.31535{millivolt}));
    ode(ff, time) = (fss-ff)/tff;
    ode(fs, time) = (fss-fs)/tfs;
    Afs = 1{dimensionless}-Aff;
    f = Aff*ff+Afs*fs;
    fcass = fss;
    tfcaf = 13.50673{millisecond}+1{millisecond}/(0.1542{dimensionless}*exp(-(v-1.31611{millivolt})/11.3396{millivolt})+0.1542{dimensionless}*exp((v-1.31611{millivolt})/11.3396{millivolt}));
    tfcas = 177.95813{millisecond}+1{millisecond}/(4.73955e-4{dimensionless}*exp(-(v-0.79049{millivolt})/0.81777{millivolt})+4.73955e-4{dimensionless}*exp((v+2.40474{millivolt})/1.90812{millivolt}));
    Afcaf = 0.3{dimensionless}+0.6{dimensionless}/(1{dimensionless}+exp((v-9.24247{millivolt})/27.96201{millivolt}));
    Afcas = 1{dimensionless}-Afcaf;
    ode(fcaf, time) = (fcass-fcaf)/tfcaf;
    ode(fcas, time) = (fcass-fcas)/tfcas;
    fca = Afcaf*fcaf+Afcas*fcas;
    jcass = 1.0{dimensionless}/(1.0{dimensionless}+exp((v+17.66945{millivolt})/3.21501{millivolt}));
    ode(jca, time) = (jcass-jca)/tjca;
    tffp = 2.5{dimensionless}*tff;
    ode(ffp, time) = (fss-ffp)/tffp;
    fp = Aff*ffp+Afs*fs;
    tfcafp = 2.5{dimensionless}*tfcaf;
    ode(fcafp, time) = (fcass-fcafp)/tfcafp;
    fcap = Afcaf*fcafp+Afcas*fcas;
    km2n = jca*0.84191{per_millisecond};
    anca = 1{dimensionless}/(k2n/km2n+pow(1{dimensionless}+Kmn/caj, 3.80763{dimensionless}));
    ode(nca, time) = anca*k2n-nca*km2n;
    anca_i = 1{dimensionless}/(k2n/km2n+pow(1{dimensionless}+Kmn/casl, 3.80763{dimensionless}));
    ode(nca_i, time) = anca_i*k2n-nca_i*km2n;
    Io = 0.5{dimensionless}*(nao+ko+clo+4{dimensionless}*cao)/1000{millimolar};
    Iss = 0.5{dimensionless}*(nasl+ki+cli+4{dimensionless}*casl)/1000{millimolar};
    constA = 1.82e6{dimensionless}*pow(dielConstant*T, -1.5{dimensionless});
    gamma_cass = pow(10{dimensionless}, -constA*4{dimensionless}*(sqrt(Iss)/(1{dimensionless}+sqrt(Iss))-0.3{dimensionless}*Iss));
    gamma_cao = pow(10{dimensionless}, -constA*4{dimensionless}*(sqrt(Io)/(1{dimensionless}+sqrt(Io))-0.3{dimensionless}*Io));
    gamma_nass = pow(10{dimensionless}, -constA*1{dimensionless}*(sqrt(Iss)/(1{dimensionless}+sqrt(Iss))-0.3{dimensionless}*Iss));
    gamma_nao = pow(10{dimensionless}, -constA*1{dimensionless}*(sqrt(Io)/(1{dimensionless}+sqrt(Io))-0.3{dimensionless}*Io));
    gamma_kss = pow(10{dimensionless}, -constA*1{dimensionless}*(sqrt(Iss)/(1{dimensionless}+sqrt(Iss))-0.3{dimensionless}*Iss));
    gamma_ko = pow(10{dimensionless}, -constA*1{dimensionless}*(sqrt(Io)/(1{dimensionless}+sqrt(Io))-0.3{dimensionless}*Io));
    PhiCaL_ss = 4{dimensionless}*vffrt*(gamma_cass*casl*exp(2{dimensionless}*vfrt)-gamma_cao*cao)/(exp(2{dimensionless}*vfrt)-1{dimensionless});
    PhiCaNa_ss = 1{dimensionless}*vffrt*(gamma_nass*nasl*exp(1{dimensionless}*vfrt)-gamma_nao*nao)/(exp(1{dimensionless}*vfrt)-1{dimensionless});
    PhiCaK_ss = 1{dimensionless}*vffrt*(gamma_kss*ki*exp(1{dimensionless}*vfrt)-gamma_ko*ko)/(exp(1{dimensionless}*vfrt)-1{dimensionless});
    Ii = 0.5{dimensionless}*(nai+ki+cli+4{dimensionless}*cai)/1000{millimolar};
    gamma_cai = pow(10{dimensionless}, -constA*4{dimensionless}*(sqrt(Ii)/(1{dimensionless}+sqrt(Ii))-0.3{dimensionless}*Ii));
    gamma_nai = pow(10{dimensionless}, -constA*1{dimensionless}*(sqrt(Ii)/(1{dimensionless}+sqrt(Ii))-0.3{dimensionless}*Ii));
    gamma_ki = pow(10{dimensionless}, -constA*1{dimensionless}*(sqrt(Ii)/(1{dimensionless}+sqrt(Ii))-0.3{dimensionless}*Ii));
    PhiCaL_i = 4{dimensionless}*vffrt*(gamma_cai*cai*exp(2{dimensionless}*vfrt)-gamma_cao*cao)/(exp(2{dimensionless}*vfrt)-1{dimensionless});
    PhiCaNa_i = 1{dimensionless}*vffrt*(gamma_nai*nai*exp(1{dimensionless}*vfrt)-gamma_nao*nao)/(exp(1{dimensionless}*vfrt)-1{dimensionless});
    PhiCaK_i = 1{dimensionless}*vffrt*(gamma_ki*ki*exp(1{dimensionless}*vfrt)-gamma_ko*ko)/(exp(1{dimensionless}*vfrt)-1{dimensionless});
    sigmoidTransition = 1{dimensionless}-1{dimensionless}/(1{dimensionless}+1.86532{dimensionless}*caj/0.032{millimolar});
    tauTransition = 1.0967{millisecond}+(1{dimensionless}-sigmoidTransition)*141.4299{millisecond};
    ode(ical_pureCDI_junc, time) = -ical_pureCDI_junc*sigmoidTransition/tauTransition+(1{dimensionless}-ical_pureCDI_junc)*rateRecovery;
    sigmoidTransition2 = 1{dimensionless}-1{dimensionless}/(1{dimensionless}+1.86532{dimensionless}*casl/0.032{millimolar});
    tauTransition2 = 1.0967{millisecond}+(1{dimensionless}-sigmoidTransition2)*141.4299{millisecond};
    ode(ical_pureCDI_sl, time) = -ical_pureCDI_sl*sigmoidTransition2/tauTransition2+(1{dimensionless}-ical_pureCDI_sl)*rateRecovery;
    PCa = sel
      case celltype == 1{dimensionless}:
        PCa_b*ICaLPCa_multiplier*1.025{dimensionless};
      case celltype == 2{dimensionless}:
        PCa_b*ICaLPCa_multiplier*1.1{dimensionless};
      otherwise:
        PCa_b*ICaLPCa_multiplier;
    endsel;
    PCap = 1.1{dimensionless}*PCa;
    PCaNa = 7.734329695819495e-04{dimensionless}*PCa;
    PCaK = 2.211399546628710e-04{dimensionless}*PCa;
    PCaNap = 7.734329695819495e-04{dimensionless}*PCap;
    PCaKp = 2.211399546628710e-04{dimensionless}*PCap;
    dPss = min(1.0323{dimensionless}*exp(-1.0553{dimensionless}*exp(-0.0810{per_millivolt}*(v+12.62483{millivolt}))), 1{dimensionless});
    ode(d_P, time) = (dPss-d_P)/td;
    fss_P = 1.0{dimensionless}/(1.0{dimensionless}+exp((v+25.58{millivolt})/3.696{millivolt}));
    ode(ff_P, time) = (fss_P-ff_P)/tff;
    ode(fs_P, time) = (fss_P-fs_P)/tfs;
    fcass_P = fss_P;
    ode(fcaf_P, time) = (fcass_P-fcaf_P)/tfcaf;
    ode(fcas_P, time) = (fcass_P-fcas_P)/tfcas;
    f_P = Aff*ff_P+Afs*fs_P;
    fcap_P = Afcaf*fcaf_P+Afcas*fcas_P;
    PCa_Pb = 1.9{dimensionless}*PCa;
    PCa_P = sel
      case celltype == 1{dimensionless}:
        PCa_Pb*1.025{dimensionless};
      case celltype == 2{dimensionless}:
        PCa_Pb*1.1{dimensionless};
      otherwise:
        PCa_Pb;
    endsel;
    PCaNa_P = 7.734329695819495e-04{dimensionless}*PCa_P;
    PCaK_P = 2.211399546628710e-04{dimensionless}*PCa_P;
    fBPss = fss_P;
    ode(fBPf, time) = (fBPss-fBPf)/tffp;
    fBP = Aff*fBPf+Afs*fs_P;
    fcaBPss = fcass_P;
    ode(fcaBPf, time) = (fcaBPss-fcaBPf)/tfcafp;
    fcaBP = Afcaf*fcaBPf+Afcas*fcas_P;
    fICaL_P = fICaLP;
    fICaL_BP = fICaLp*fICaL_P;
    fICaL_CaMKonly = fICaLp-fICaL_BP;
    fICaL_PKAonly = fICaL_P-fICaL_BP;
    ICaL_ss_NP = PCa*PhiCaL_ss*d*(f*(1.0{dimensionless}-nca)+jca*fca*nca);
    ICaL_ss_CaMK = PCap*PhiCaL_ss*d*(fp*(1.0{dimensionless}-nca)+jca*fcap*nca);
    ICaL_ss_PKA = PCa_P*PhiCaL_ss*d_P*(f_P*(1.0{dimensionless}-nca)+jca*fcap_P*nca);
    ICaL_ss_BP = PCa_P*PhiCaL_ss*d_P*(fBP*(1.0{dimensionless}-nca)+jca*fcaBP*nca);
    ICaL_i_NP = PCa*PhiCaL_i*d*(f*(1.0{dimensionless}-nca_i)+jca*fca*nca_i);
    ICaL_i_CaMK = PCap*PhiCaL_i*d*(fp*(1.0{dimensionless}-nca_i)+jca*fcap*nca_i);
    ICaL_i_PKA = PCa_P*PhiCaL_i*d_P*(f_P*(1.0{dimensionless}-nca_i)+jca*fcap_P*nca_i);
    ICaL_i_BP = PCa_P*PhiCaL_i*d_P*(fBP*(1.0{dimensionless}-nca_i)+jca*fcaBP*nca_i);
    ICaNa_ss_NP = PCaNa*PhiCaNa_ss*d*(f*(1.0{dimensionless}-nca)+jca*fca*nca);
    ICaNa_ss_CaMK = PCaNap*PhiCaNa_ss*d*(fp*(1.0{dimensionless}-nca)+jca*fcap*nca);
    ICaNa_ss_PKA = PCaNa_P*PhiCaNa_ss*d_P*(f_P*(1.0{dimensionless}-nca)+jca*fcap_P*nca);
    ICaNa_ss_BP = PCaNa_P*PhiCaNa_ss*d_P*(fBP*(1.0{dimensionless}-nca)+jca*fcaBP*nca);
    ICaNa_i_NP = PCaNa*PhiCaNa_i*d*(f*(1.0{dimensionless}-nca_i)+jca*fca*nca_i);
    ICaNa_i_CaMK = PCaNap*PhiCaNa_i*d*(fp*(1.0{dimensionless}-nca_i)+jca*fcap*nca_i);
    ICaNa_i_PKA = PCaNa_P*PhiCaNa_i*d_P*(f_P*(1.0{dimensionless}-nca_i)+jca*fcap_P*nca_i);
    ICaNa_i_BP = PCaNa_P*PhiCaNa_i*d_P*(fBP*(1.0{dimensionless}-nca_i)+jca*fcaBP*nca_i);
    ICaK_ss_NP = PCaK*PhiCaK_ss*d*(f*(1.0{dimensionless}-nca)+jca*fca*nca);
    ICaK_ss_CaMK = PCaKp*PhiCaK_ss*d*(fp*(1.0{dimensionless}-nca)+jca*fcap*nca);
    ICaK_ss_PKA = PCaK_P*PhiCaK_ss*d_P*(f_P*(1.0{dimensionless}-nca)+jca*fcap_P*nca);
    ICaK_ss_BP = PCaK_P*PhiCaK_ss*d_P*(fBP*(1.0{dimensionless}-nca)+jca*fcaBP*nca);
    ICaK_i_NP = PCaK*PhiCaK_i*d*(f*(1.0{dimensionless}-nca_i)+jca*fca*nca_i);
    ICaK_i_CaMK = PCaKp*PhiCaK_i*d*(fp*(1.0{dimensionless}-nca_i)+jca*fcap*nca_i);
    ICaK_i_PKA = PCaK_P*PhiCaK_i*d_P*(f_P*(1.0{dimensionless}-nca_i)+jca*fcap_P*nca_i);
    ICaK_i_BP = PCaK_P*PhiCaK_i*d_P*(fBP*(1.0{dimensionless}-nca_i)+jca*fcaBP*nca_i);
    ICaL_junc = ((1{dimensionless}-fICaL_CaMKonly-fICaL_PKAonly-fICaL_BP)*ICaL_ss_NP+fICaL_CaMKonly*ICaL_ss_CaMK+fICaL_PKAonly*ICaL_ss_PKA+fICaL_BP*ICaL_ss_BP)*ical_pureCDI_junc*ICaL_fractionSS;
    ICaNa_junc = ((1{dimensionless}-fICaL_CaMKonly-fICaL_PKAonly-fICaL_BP)*ICaNa_ss_NP+fICaL_CaMKonly*ICaNa_ss_CaMK+fICaL_PKAonly*ICaNa_ss_PKA+fICaL_BP*ICaNa_ss_BP)*ical_pureCDI_junc*ICaL_fractionSS;
    ICaK_junc = ((1{dimensionless}-fICaL_CaMKonly-fICaL_PKAonly-fICaL_BP)*ICaK_ss_NP+fICaL_CaMKonly*ICaK_ss_CaMK+fICaL_PKAonly*ICaK_ss_PKA+fICaL_BP*ICaK_ss_BP)*ical_pureCDI_junc*ICaL_fractionSS;
    ICaL_sl = ((1{dimensionless}-fICaL_CaMKonly-fICaL_PKAonly-fICaL_BP)*ICaL_i_NP+fICaL_CaMKonly*ICaL_i_CaMK+fICaL_PKAonly*ICaL_i_PKA+fICaL_BP*ICaL_i_BP)*ical_pureCDI_sl*(1{dimensionless}-ICaL_fractionSS);
    ICaNa_sl = ((1{dimensionless}-fICaL_CaMKonly-fICaL_PKAonly-fICaL_BP)*ICaNa_i_NP+fICaL_CaMKonly*ICaNa_i_CaMK+fICaL_PKAonly*ICaNa_i_PKA+fICaL_BP*ICaNa_i_BP)*ical_pureCDI_sl*(1{dimensionless}-ICaL_fractionSS);
    ICaK_sl = ((1{dimensionless}-fICaL_CaMKonly-fICaL_PKAonly-fICaL_BP)*ICaK_i_NP+fICaL_CaMKonly*ICaK_i_CaMK+fICaL_PKAonly*ICaK_i_PKA+fICaL_BP*ICaK_i_BP)*ical_pureCDI_sl*(1{dimensionless}-ICaL_fractionSS);
    ICaL = ICaL_junc+ICaL_sl;
    ICaNa = ICaNa_junc+ICaNa_sl;
    ICaK = ICaK_junc+ICaK_sl;
    ICa_tot = ICaL+ICaK+ICaNa;
  enddef;

  def comp Ito as
    var Itos_multiplier: dimensionless {pub: in};
    var Gto_slow: milliS_per_microF;
    var Itof_multiplier: dimensionless {pub: in};
    var Gto_fast: milliS_per_microF;
    var camk_f_RyR: dimensionless {pub: in};
    var fItop: dimensionless;
    var xtos: dimensionless {init: 0.000286101402392894};
    var xtoss: dimensionless;
    var tauxtos: millisecond;
    var ytos: dimensionless {init: 0.768184915918179};
    var ytoss: dimensionless;
    var tauytos: millisecond;
    var xtof: dimensionless {init: 0.00028609937449475};
    var tauxtof: millisecond;
    var ytof: dimensionless {init: 0.99999864687518};
    var tauytof: millisecond;
    var xtos_p: dimensionless {init: 0.000132590983159417};
    var xtof_p: dimensionless {init: 0.000132590043205027};
    var xtoss_p: dimensionless;
    var dti_develop: dimensionless;
    var dti_recover: dimensionless;
    var tauytos_p: millisecond;
    var tauytof_p: millisecond;
    var ytos_p: dimensionless {init: 0.777117031645024};
    var ytof_p: dimensionless {init: 0.99999864687975};
    var time: millisecond {pub: in};
    var celltype: dimensionless {pub: in};
    var v: millivolt {pub: in};
    var EK: millivolt {pub: in};
    var Ito: microA_per_microF {pub: out};
    var Itos: microA_per_microF;
    var Itof: microA_per_microF;
    fItop = camk_f_RyR;
    Gto_slow = sel
      case celltype == 1{dimensionless}:
        0.02036{dimensionless}*Itos_multiplier;
      case celltype == 2{dimensionless}:
        0.04632{dimensionless}*Itos_multiplier;
      otherwise:
        0.07210{dimensionless}*Itos_multiplier;
    endsel;
    Gto_fast = sel
      case celltype == 1{dimensionless}:
        0.29856{dimensionless}*Itof_multiplier;
      case celltype == 2{dimensionless}:
        0.14928{dimensionless}*Itof_multiplier;
      otherwise:
        0.01276{dimensionless}*Itof_multiplier;
    endsel;
    xtoss = 1{dimensionless}/(1{dimensionless}+exp(-(v-19.0{millivolt})/13{millivolt}));
    tauxtos = 9{millisecond}/(1{dimensionless}+exp((v+3.0{millivolt})/15{millivolt}))+0.5{millisecond};
    ode(xtos, time) = (xtoss-xtos)/tauxtos;
    ytoss = 1{dimensionless}/(1{dimensionless}+exp((v+19.5{millivolt})/5{millivolt}));
    tauytos = 800{millisecond}/(1{dimensionless}+exp((v+60.0{millivolt})/10{millivolt}))+30{millisecond};
    ode(ytos, time) = (ytoss-ytos)/tauytos;
    tauxtof = 8.5{millisecond}*exp(-sqr((v+45{millivolt})/50{millivolt}))+0.5{millisecond};
    ode(xtof, time) = (xtoss-xtof)/tauxtof;
    tauytof = 85{millisecond}*exp(-sqr(v+40{millivolt})/220{millivolt_square})+7{millisecond};
    ode(ytof, time) = (ytoss-ytof)/tauytof;
    xtoss_p = 1{dimensionless}/(1{dimensionless}+exp(-(v-29{millivolt})/13{millivolt}));
    ode(xtos_p, time) = (xtoss_p-xtos_p)/tauxtos;
    ode(xtof_p, time) = (xtoss_p-xtof_p)/tauxtof;
    dti_develop = 1.354{dimensionless}+1.0e-4{dimensionless}/(exp((v-167.4{millivolt})/15.89{millivolt})+exp(-(v-12.23{millivolt})/0.2154{millivolt}));
    dti_recover = 1.0{dimensionless}-0.5{dimensionless}/(1.0{dimensionless}+exp((v+70.0{millivolt})/20.0{millivolt}));
    tauytos_p = tauytos*dti_develop*dti_recover;
    tauytof_p = tauytof*dti_develop*dti_recover;
    ode(ytos_p, time) = (ytoss-ytos_p)/tauytos_p;
    ode(ytof_p, time) = (ytoss-ytof_p)/tauytof_p;
    Itos = Gto_slow*(v-EK)*((1{dimensionless}-fItop)*xtos*ytos+fItop*xtos_p*ytos_p);
    Itof = Gto_fast*(v-EK)*((1{dimensionless}-fItop)*xtof*ytof+fItop*xtof_p*ytof_p);
    Ito = Itos+Itof;
  enddef;

  def comp IKr as
    var GKr_b: milliS_per_microF {init: 0.043};
    var IKr_multiplier: dimensionless {pub: in};
    var GKr: milliS_per_microF;
    var celltype_factor: dimensionless;
    var sex_factor: dimensionless;
    var C0: dimensionless {init: 0.997558791218494};
    var C1: dimensionless {init: 0.000960122333286174};
    var C2: dimensionless {init: 0.000804204051120587};
    var I: dimensionless {init: 0.0000355901681542091};
    var O: dimensionless {init: 0.00064129227809794};
    var alpha: per_millisecond;
    var beta: per_millisecond;
    var alpha_1: per_millisecond {init: 0.154375};
    var beta_1: per_millisecond {init: 0.1911};
    var alpha_2: per_millisecond;
    var beta_2: per_millisecond;
    var alpha_i: per_millisecond;
    var beta_i: per_millisecond;
    var alpha_C2ToI: per_millisecond;
    var beta_ItoC2: per_millisecond;
    var v: millivolt {pub: in};
    var vfrt: dimensionless {pub: in};
    var time: millisecond {pub: in};
    var celltype: dimensionless {pub: in};
    var sex: dimensionless {pub: in};
    var EK: millivolt {pub: in};
    var ko: millimolar {pub: in};
    var IKr: microA_per_microF {pub: out};
    celltype_factor = sel
      case celltype == 1{dimensionless}:
        1.25{dimensionless};
      case celltype == 2{dimensionless}:
        0.7{dimensionless};
      otherwise:
        1.0{dimensionless};
    endsel;
    sex_factor = sel
      case sex == 1{dimensionless}:
        1.1{dimensionless};
      case sex == 2{dimensionless}:
        0.87{dimensionless};
      otherwise:
        1.0{dimensionless};
    endsel;
    GKr = GKr_b*celltype_factor*sex_factor*IKr_multiplier;
    alpha = 0.1161{per_millisecond}*exp(0.2990{dimensionless}*vfrt);
    beta = 0.2442{per_millisecond}*exp(-1.604{dimensionless}*vfrt);
    alpha_2 = 0.0578{per_millisecond}*exp(0.9710{dimensionless}*vfrt);
    beta_2 = 0.349e-3{per_millisecond}*exp(-1.062{dimensionless}*vfrt);
    alpha_i = 0.2533{per_millisecond}*exp(0.5953{dimensionless}*vfrt);
    beta_i = 0.04568{per_millisecond}*exp(-0.8209{dimensionless}*vfrt);
    alpha_C2ToI = 0.52e-4{per_millisecond}*exp(1.525{dimensionless}*vfrt);
    beta_ItoC2 = beta_2*beta_i*alpha_C2ToI/(alpha_2*alpha_i);
    ode(C0, time) = beta*C1-alpha*C0;
    ode(C1, time) = alpha*C0+beta_1*C2-(beta+alpha_1)*C1;
    ode(C2, time) = alpha_1*C1+beta_2*O+beta_ItoC2*I-(beta_1+alpha_2+alpha_C2ToI)*C2;
    ode(O, time) = alpha_2*C2+beta_i*I-(beta_2+alpha_i)*O;
    ode(I, time) = alpha_C2ToI*C2+alpha_i*O-(beta_ItoC2+beta_i)*I;
    IKr = GKr*sqrt(ko/5{millimolar})*O*(v-EK);
  enddef;

  def comp IKs as
    var GKs_b: milliS_per_microF {init: 2.97002};
    var IKs_multiplier: dimensionless {pub: in};
    var GKs: milliS_per_microF;
    var celltype_factor: dimensionless;
    var sex_factor: dimensionless;
    var fIKs_PKA: dimensionless {pub: in};
    var kPKA_IKs: dimensionless;
    var gKs_factor: dimensionless {init: 0.01};
    var P_g_0: dimensionless;
    var P_g_max: dimensionless;
    var P_vh_0: millivolt;
    var P_vh_max: millivolt;
    var P_tau_0: millivolt;
    var P_tau_max: millivolt;
    var gks_junc: dimensionless;
    var gks_sl: dimensionless;
    var VsXs_Ca_junc: millivolt;
    var xsss_junc: dimensionless;
    var VsTs_Ca_junc: millivolt;
    var tauxs_junc: millisecond;
    var VsXs_Ca_sl: millivolt;
    var xsss_sl: dimensionless;
    var VsTs_Ca_sl: millivolt;
    var tauxs_sl: millisecond;
    var xs_junc: dimensionless {init: 0.0311875010014239};
    var xs_sl: dimensionless {init: 0.031204810574373};
    var caj: millimolar {pub: in};
    var casl: millimolar {pub: in};
    var Fjunc: dimensionless {pub: in};
    var Fsl: dimensionless {pub: in};
    var v: millivolt {pub: in};
    var time: millisecond {pub: in};
    var celltype: dimensionless {pub: in};
    var sex: dimensionless {pub: in};
    var EKs: millivolt {pub: in};
    var IKs: microA_per_microF {pub: out};
    var IKs_junc: microA_per_microF;
    var IKs_sl: microA_per_microF;
    celltype_factor = sel
      case celltype == 2{dimensionless}:
        0.5{dimensionless};
      otherwise:
        1.0{dimensionless};
    endsel;
    sex_factor = sel
      case sex == 1{dimensionless}:
        1.09{dimensionless};
      case sex == 2{dimensionless}:
        0.905{dimensionless};
      otherwise:
        1.0{dimensionless};
    endsel;
    GKs = GKs_b*celltype_factor*sex_factor*IKs_multiplier;
    kPKA_IKs = fIKs_PKA;
    P_g_0 = gKs_factor*(0.2{dimensionless}+0.2{dimensionless}*kPKA_IKs);
    P_g_max = gKs_factor*(0.8{dimensionless}+7{dimensionless}*kPKA_IKs);
    P_vh_0 = -1{millivolt}-10{millivolt}*kPKA_IKs;
    P_vh_max = -12{millivolt}-9{millivolt}*kPKA_IKs;
    P_tau_0 = 26{millivolt}+9{millivolt}*kPKA_IKs;
    P_tau_max = 40{millivolt}+4{millivolt}*kPKA_IKs;
    gks_junc = P_g_0+(P_g_max-P_g_0)/(1{dimensionless}+pow(150e-6{millimolar}/caj, 1.3{dimensionless}));
    gks_sl = P_g_0+(P_g_max-P_g_0)/(1{dimensionless}+pow(150e-6{millimolar}/casl, 1.3{dimensionless}));
    VsXs_Ca_junc = P_vh_0+(P_vh_max-P_vh_0)/(1{dimensionless}+pow(350e-6{millimolar}/caj, 4{dimensionless}));
    xsss_junc = 1{dimensionless}/(1{dimensionless}+exp(-(v-VsXs_Ca_junc)/25{millivolt}));
    VsTs_Ca_junc = P_tau_0+(P_tau_max-P_tau_0)/(1{dimensionless}+pow(150e-6{millimolar}/caj, 3{dimensionless}));
    tauxs_junc = 2{dimensionless}*(50{millisecond}+(50{millisecond}+350{millisecond}*exp(-sqr(v+30{millivolt})/4000{millivolt_square}))/(1{dimensionless}+exp(-(v+VsTs_Ca_junc)/10{millivolt})));
    VsXs_Ca_sl = P_vh_0+(P_vh_max-P_vh_0)/(1{dimensionless}+pow(350e-6{millimolar}/casl, 4{dimensionless}));
    xsss_sl = 1{dimensionless}/(1{dimensionless}+exp(-(v-VsXs_Ca_sl)/25{millivolt}));
    VsTs_Ca_sl = P_tau_0+(P_tau_max-P_tau_0)/(1{dimensionless}+pow(150e-6{millimolar}/casl, 3{dimensionless}));
    tauxs_sl = 2{dimensionless}*(50{millisecond}+(50{millisecond}+350{millisecond}*exp(-sqr(v+30{millivolt})/4000{millivolt_square}))/(1{dimensionless}+exp(-(v+VsTs_Ca_sl)/10{millivolt})));
    ode(xs_junc, time) = (xsss_junc-xs_junc)/tauxs_junc;
    ode(xs_sl, time) = (xsss_sl-xs_sl)/tauxs_sl;
    IKs_junc = Fjunc*GKs*gks_junc*sqr(xs_junc)*(v-EKs);
    IKs_sl = Fsl*GKs*gks_sl*sqr(xs_sl)*(v-EKs);
    IKs = IKs_junc+IKs_sl;
  enddef;

  def comp IK1 as
    var IK1_multiplier: dimensionless {pub: in};
    var GK1_b: milliS_per_microF {init: 0.6992};
    var GK1: milliS_per_microF;
    var celltype_factor: dimensionless;
    var sex_factor: dimensionless;
    var aK1: dimensionless;
    var bK1: dimensionless;
    var K1ss: dimensionless;
    var v: millivolt {pub: in};
    var celltype: dimensionless {pub: in};
    var sex: dimensionless {pub: in};
    var EK: millivolt {pub: in};
    var ko: millimolar {pub: in};
    var IK1: microA_per_microF {pub: out};
    celltype_factor = sel
      case celltype == 1{dimensionless}:
        1.1{dimensionless};
      case celltype == 2{dimensionless}:
        1.3{dimensionless};
      otherwise:
        1.0{dimensionless};
    endsel;
    sex_factor = sel
      case sex == 1{dimensionless}:
        1.07{dimensionless};
      case sex == 2{dimensionless}:
        0.92{dimensionless};
      otherwise:
        1.0{dimensionless};
    endsel;
    GK1 = GK1_b*celltype_factor*sex_factor*IK1_multiplier;
    aK1 = 4.094{dimensionless}/(1{dimensionless}+exp(0.1217{per_millivolt}*(v-EK-49.934{millivolt})));
    bK1 = (15.72{dimensionless}*exp(0.0674{per_millivolt}*(v-EK-3.257{millivolt}))+exp(0.0618{per_millivolt}*(v-EK-594.31{millivolt})))/(1{dimensionless}+exp(-0.1629{per_millivolt}*(v-EK+14.207{millivolt})));
    K1ss = aK1/(aK1+bK1);
    IK1 = GK1*sqrt(ko/5{millimolar})*K1ss*(v-EK);
  enddef;

  def comp INaCa as
    var INaCa_fractionSS: dimensionless {init: 0.31};
    var kna1: per_millisecond {init: 11.9712};
    var kna2: per_millisecond {init: 2.76};
    var kna3: per_millisecond {init: 88.767};
    var kasymm: dimensionless {init: 19.4258};
    var wna: dimensionless {init: 3.2978e4};
    var wca: dimensionless {init: 5.1756e4};
    var wnaca: dimensionless {init: 2.7763e3};
    var kcaon: per_millisecond {init: 3.4164e6};
    var kcaoff: per_millisecond {init: 3.8532e3};
    var qna: dimensionless {init: 0.6718};
    var qca: dimensionless {init: 0.0955};
    var hna: dimensionless;
    var hca: dimensionless;
    var zca: dimensionless {pub: in};
    var KmCaAct: millimolar {init: 150e-6};
    var zna: dimensionless {pub: in};
    var Gncx_b: milliS_per_microF {init: 1.79e-3};
    var Gncx: milliS_per_microF;
    var INaCa_multiplier: dimensionless {pub: in};
    var celltype_factor: dimensionless;
    var sex_factor: dimensionless;
    var v: millivolt {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var nai: millimolar {pub: in};
    var nasl: millimolar {pub: in};
    var nao: millimolar {pub: in};
    var cai: millimolar {pub: in};
    var casl: millimolar {pub: in};
    var caj: millimolar {pub: in};
    var cao: millimolar {pub: in};
    var h1_i: dimensionless;
    var h2_i: dimensionless;
    var h3_i: dimensionless;
    var h4_i: dimensionless;
    var h5_i: dimensionless;
    var h6_i: dimensionless;
    var h7_i: dimensionless;
    var h8_i: dimensionless;
    var h9_i: dimensionless;
    var h10_i: dimensionless;
    var h11_i: dimensionless;
    var h12_i: dimensionless;
    var k1_i: dimensionless;
    var k2_i: dimensionless;
    var k3p_i: dimensionless;
    var k3pp_i: dimensionless;
    var k3_i: dimensionless;
    var k4_i: dimensionless;
    var k4p_i: dimensionless;
    var k4pp_i: dimensionless;
    var k5_i: dimensionless;
    var k6_i: dimensionless;
    var k7_i: dimensionless;
    var k8_i: dimensionless;
    var x1_i: dimensionless;
    var x2_i: dimensionless;
    var x3_i: dimensionless;
    var x4_i: dimensionless;
    var E1_i: dimensionless;
    var E2_i: dimensionless;
    var E3_i: dimensionless;
    var E4_i: dimensionless;
    var allo_i: dimensionless;
    var JncxNa_i: millimolar_per_millisecond;
    var JncxCa_i: millimolar_per_millisecond;
    var celltype: dimensionless {pub: in};
    var sex: dimensionless {pub: in};
    var INaCa_i: microA_per_microF {pub: out};
    var INaCa_ss: microA_per_microF {pub: out};
    var INaCa: microA_per_microF;
    var h1_ss: dimensionless;
    var h2_ss: dimensionless;
    var h3_ss: dimensionless;
    var h4_ss: dimensionless;
    var h5_ss: dimensionless;
    var h6_ss: dimensionless;
    var h7_ss: dimensionless;
    var h8_ss: dimensionless;
    var h9_ss: dimensionless;
    var h10_ss: dimensionless;
    var h11_ss: dimensionless;
    var h12_ss: dimensionless;
    var k1_ss: dimensionless;
    var k2_ss: dimensionless;
    var k3p_ss: dimensionless;
    var k3pp_ss: dimensionless;
    var k3_ss: dimensionless;
    var k4_ss: dimensionless;
    var k4p_ss: dimensionless;
    var k4pp_ss: dimensionless;
    var k5_ss: dimensionless;
    var k6_ss: dimensionless;
    var k7_ss: dimensionless;
    var k8_ss: dimensionless;
    var x1_ss: dimensionless;
    var x2_ss: dimensionless;
    var x3_ss: dimensionless;
    var x4_ss: dimensionless;
    var E1_ss: dimensionless;
    var E2_ss: dimensionless;
    var E3_ss: dimensionless;
    var E4_ss: dimensionless;
    var allo_ss: dimensionless;
    var JncxNa_ss: millimolar_per_millisecond;
    var JncxCa_ss: millimolar_per_millisecond;
    celltype_factor = sel
      case celltype == 1{dimensionless}:
        1.1{dimensionless};
      case celltype == 2{dimensionless}:
        1.4{dimensionless};
      otherwise:
        1.0{dimensionless};
    endsel;
    sex_factor = sel
      case sex == 1{dimensionless}:
        1.0{dimensionless}/1.0724{dimensionless};
      case sex == 2{dimensionless}:
        1.0724{dimensionless};
      otherwise:
        1.0{dimensionless};
    endsel;
    Gncx = Gncx_b*celltype_factor*sex_factor*INaCa_multiplier;
    hca = exp(qca*(v-8.3117{millivolt})*F/(R*T));
    hna = exp(qna*(v-8.3117{millivolt})*F/(R*T));
    h1_i = 1{dimensionless}+nai/kna3*(1{dimensionless}+hna);
    h2_i = nai*hna/(kna3*h1_i);
    h3_i = 1{dimensionless}/h1_i;
    h4_i = 1{dimensionless}+nai/kna1*(1{dimensionless}+nai/kna2);
    h5_i = nai*nai/(h4_i*kna1*kna2);
    h6_i = 1{dimensionless}/h4_i;
    h7_i = 1{dimensionless}+nao/kna3*(1{dimensionless}+1{dimensionless}/hna);
    h8_i = nao/(kna3*hna*h7_i);
    h9_i = 1{dimensionless}/h7_i;
    h10_i = kasymm+1{dimensionless}+nao/kna1*(1{dimensionless}+nao/kna2);
    h11_i = nao*nao/(h10_i*kna1*kna2);
    h12_i = 1{dimensionless}/h10_i;
    k1_i = h12_i*cao*kcaon;
    k2_i = kcaoff;
    k3p_i = h9_i*wca;
    k3pp_i = h8_i*wnaca;
    k3_i = k3p_i+k3pp_i;
    k4p_i = h3_i*wca/hca;
    k4pp_i = h2_i*wnaca;
    k4_i = k4p_i+k4pp_i;
    k5_i = kcaoff;
    k6_i = h6_i*cai*kcaon;
    k7_i = h5_i*h2_i*wna;
    k8_i = h8_i*h11_i*wna;
    x1_i = k2_i*k4_i*(k7_i+k6_i)+k5_i*k7_i*(k2_i+k3_i);
    x2_i = k1_i*k7_i*(k4_i+k5_i)+k4_i*k6_i*(k1_i+k8_i);
    x3_i = k1_i*k3_i*(k7_i+k6_i)+k8_i*k6_i*(k2_i+k3_i);
    x4_i = k2_i*k8_i*(k4_i+k5_i)+k3_i*k5_i*(k1_i+k8_i);
    E1_i = x1_i/(x1_i+x2_i+x3_i+x4_i);
    E2_i = x2_i/(x1_i+x2_i+x3_i+x4_i);
    E3_i = x3_i/(x1_i+x2_i+x3_i+x4_i);
    E4_i = x4_i/(x1_i+x2_i+x3_i+x4_i);
    allo_i = 1{dimensionless}/(1{dimensionless}+sqr(KmCaAct/casl));
    JncxNa_i = 3{dimensionless}*(E4_i*k7_i-E1_i*k8_i)+E3_i*k4pp_i-E2_i*k3pp_i;
    JncxCa_i = E2_i*k2_i-E1_i*k1_i;
    INaCa_i = (1{dimensionless}-INaCa_fractionSS)*Gncx*allo_i*(zna*JncxNa_i+zca*JncxCa_i);
    h1_ss = 1{dimensionless}+nasl/kna3*(1{dimensionless}+hna);
    h2_ss = nasl*hna/(kna3*h1_ss);
    h3_ss = 1{dimensionless}/h1_ss;
    h4_ss = 1{dimensionless}+nasl/kna1*(1{dimensionless}+nasl/kna2);
    h5_ss = nasl*nasl/(h4_ss*kna1*kna2);
    h6_ss = 1{dimensionless}/h4_ss;
    h7_ss = 1{dimensionless}+nao/kna3*(1{dimensionless}+1{dimensionless}/hna);
    h8_ss = nao/(kna3*hna*h7_ss);
    h9_ss = 1{dimensionless}/h7_ss;
    h10_ss = kasymm+1{dimensionless}+nao/kna1*(1{dimensionless}+nao/kna2);
    h11_ss = nao*nao/(h10_ss*kna1*kna2);
    h12_ss = 1{dimensionless}/h10_ss;
    k1_ss = h12_ss*cao*kcaon;
    k2_ss = kcaoff;
    k3p_ss = h9_ss*wca;
    k3pp_ss = h8_ss*wnaca;
    k3_ss = k3p_ss+k3pp_ss;
    k4p_ss = h3_ss*wca/hca;
    k4pp_ss = h2_ss*wnaca;
    k4_ss = k4p_ss+k4pp_ss;
    k5_ss = kcaoff;
    k6_ss = h6_ss*casl*kcaon;
    k7_ss = h5_ss*h2_ss*wna;
    k8_ss = h8_ss*h11_ss*wna;
    x1_ss = k2_ss*k4_ss*(k7_ss+k6_ss)+k5_ss*k7_ss*(k2_ss+k3_ss);
    x2_ss = k1_ss*k7_ss*(k4_ss+k5_ss)+k4_ss*k6_ss*(k1_ss+k8_ss);
    x3_ss = k1_ss*k3_ss*(k7_ss+k6_ss)+k8_ss*k6_ss*(k2_ss+k3_ss);
    x4_ss = k2_ss*k8_ss*(k4_ss+k5_ss)+k3_ss*k5_ss*(k1_ss+k8_ss);
    E1_ss = x1_ss/(x1_ss+x2_ss+x3_ss+x4_ss);
    E2_ss = x2_ss/(x1_ss+x2_ss+x3_ss+x4_ss);
    E3_ss = x3_ss/(x1_ss+x2_ss+x3_ss+x4_ss);
    E4_ss = x4_ss/(x1_ss+x2_ss+x3_ss+x4_ss);
    allo_ss = 1{dimensionless}/(1{dimensionless}+sqr(KmCaAct/caj));
    JncxNa_ss = 3{dimensionless}*(E4_ss*k7_ss-E1_ss*k8_ss)+E3_ss*k4pp_ss-E2_ss*k3pp_ss;
    JncxCa_ss = E2_ss*k2_ss-E1_ss*k1_ss;
    INaCa_ss = INaCa_fractionSS*Gncx*allo_ss*(zna*JncxNa_ss+zca*JncxCa_ss);
    INaCa = INaCa_i+INaCa_ss;
  enddef;

  def comp INaK as
    var IbarNaK_b: microA_per_microF {init: 2.10774};
    var INaK_multiplier: dimensionless {pub: in};
    var IbarNaK: microA_per_microF;
    var KmNaip: millimolar {init: 11};
    var KmNaip_PKA: millimolar {init: 8.4615};
    var KmKo: millimolar {init: 1.5};
    var fnak: dimensionless;
    var fINaK_PKA: dimensionless {pub: in};
    var v: millivolt {pub: in};
    var nao: millimolar {pub: in};
    var naj: millimolar {pub: in};
    var nasl: millimolar {pub: in};
    var ko: millimolar {pub: in};
    var Fjunc: dimensionless {pub: in};
    var Fsl: dimensionless {pub: in};
    var INaK_junc_noPKA: microA_per_microF;
    var INaK_junc_PKA: microA_per_microF;
    var INaK_sl_noPKA: microA_per_microF;
    var INaK_sl_PKA: microA_per_microF;
    var INaKj: microA_per_microF {pub: out};
    var INaKsl: microA_per_microF {pub: out};
    var INaK: microA_per_microF {pub: out};
    IbarNaK = INaK_multiplier*IbarNaK_b;
    fnak = 0.75{dimensionless}+(0.00375{per_millivolt}-(140{millimolar}-nao)/50{millimolar}*0.001{per_millivolt})*v;
    INaK_junc_noPKA = Fjunc*IbarNaK*fnak/(1{dimensionless}+pow(KmNaip/naj, 4{dimensionless}))*ko/(ko+KmKo);
    INaK_junc_PKA = Fjunc*IbarNaK*fnak/(1{dimensionless}+pow(KmNaip_PKA/naj, 4{dimensionless}))*ko/(ko+KmKo);
    INaK_sl_noPKA = Fsl*IbarNaK*fnak/(1{dimensionless}+pow(KmNaip/nasl, 4{dimensionless}))*ko/(ko+KmKo);
    INaK_sl_PKA = Fsl*IbarNaK*fnak/(1{dimensionless}+pow(KmNaip_PKA/nasl, 4{dimensionless}))*ko/(ko+KmKo);
    INaKj = (1{dimensionless}-fINaK_PKA)*INaK_junc_noPKA+fINaK_PKA*INaK_junc_PKA;
    INaKsl = (1{dimensionless}-fINaK_PKA)*INaK_sl_noPKA+fINaK_PKA*INaK_sl_PKA;
    INaK = INaKj+INaKsl;
  enddef;

  def comp INab as
    var GNab_b: milliS_per_microF {init: 5.94e-04};
    var INab_multiplier: dimensionless {pub: in};
    var GNab: milliS_per_microF;
    var INabj: microA_per_microF {pub: out};
    var INabsl: microA_per_microF {pub: out};
    var INab: microA_per_microF;
    var v: millivolt {pub: in};
    var ENaj: millivolt {pub: in};
    var ENasl: millivolt {pub: in};
    var Fjunc: dimensionless {pub: in};
    var Fsl: dimensionless {pub: in};
    GNab = INab_multiplier*GNab_b;
    INabj = Fjunc*GNab*(v-ENaj);
    INabsl = Fsl*GNab*(v-ENasl);
    INab = INabj+INabsl;
  enddef;

  def comp ICab as
    var GCab_b: milliS_per_microF {init: 5.15575e-04};
    var ICab_multiplier: dimensionless {pub: in};
    var GCab: milliS_per_microF;
    var ICab_junc: microA_per_microF {pub: out};
    var ICab_sl: microA_per_microF {pub: out};
    var ICab: microA_per_microF;
    var v: millivolt {pub: in};
    var ECaj: millivolt {pub: in};
    var ECasl: millivolt {pub: in};
    var Fjunc: dimensionless {pub: in};
    var Fsl: dimensionless {pub: in};
    GCab = ICab_multiplier*GCab_b;
    ICab_junc = Fjunc*GCab*(v-ECaj);
    ICab_sl = Fsl*GCab*(v-ECasl);
    ICab = ICab_junc+ICab_sl;
  enddef;

  def comp IKb as
    var GKb_b: milliS_per_microF {init: 0.010879};
    var IKb_multiplier: dimensionless {pub: in};
    var GKb: milliS_per_microF;
    var v: millivolt {pub: in};
    var EK: millivolt {pub: in};
    var xkb: dimensionless;
    var IKb: microA_per_microF {pub: out};
    xkb = 1{dimensionless}/(1{dimensionless}+exp(-(v-10.8968{millivolt})/23.9871{millivolt}));
    GKb = GKb_b*IKb_multiplier;
    IKb = GKb*xkb*(v-EK);
  enddef;

  def comp ICl as
    var GClCa_b: milliS_per_microF {init: 0.01615};
    var IClCa_multiplier: dimensionless {pub: in};
    var GClCa: milliS_per_microF;
    var GClb_b: milliS_per_microF {init: 0.00241};
    var IClb_multiplier: dimensionless {pub: in};
    var GClb: milliS_per_microF;
    var KdClCa: millimolar {init: 0.1};
    var Fjunc: dimensionless {pub: in};
    var Fsl: dimensionless {pub: in};
    var caj: millimolar {pub: in};
    var casl: millimolar {pub: in};
    var v: millivolt {pub: in};
    var ECl: millivolt {pub: in};
    var IClCa_junc: microA_per_microF;
    var IClCa_sl: microA_per_microF;
    var IClCa: microA_per_microF {pub: out};
    var IClb: microA_per_microF {pub: out};
    GClCa = IClCa_multiplier*GClCa_b;
    GClb = IClb_multiplier*GClb_b;
    IClCa_junc = 0.5{dimensionless}*Fjunc*GClCa/(1{dimensionless}+KdClCa/caj)*(v-ECl);
    IClCa_sl = 0.5{dimensionless}*Fsl*GClCa/(1{dimensionless}+KdClCa/casl)*(v-ECl);
    IClCa = IClCa_junc+IClCa_sl;
    IClb = GClb*(v-ECl);
  enddef;

  def comp IpCa as
    var sex: dimensionless {pub: in};
    var IbarSLCaP_b: milliS_per_microF {init: 0.02064};
    var IpCa_multiplier: dimensionless {pub: in};
    var IbarSLCaP: milliS_per_microF;
    var KmPCa: millimolar {init: 5e-4};
    var Q10SLCaP: dimensionless {init: 2.35};
    var Qpow: dimensionless {pub: in};
    var caj: millimolar {pub: in};
    var casl: millimolar {pub: in};
    var Fjunc: dimensionless {pub: in};
    var Fsl: dimensionless {pub: in};
    var IpCa_junc: microA_per_microF {pub: out};
    var IpCa_sl: microA_per_microF {pub: out};
    var IpCa: microA_per_microF;
    IbarSLCaP = sel
      case sex == 1{dimensionless}:
        IbarSLCaP_b*0.8{dimensionless}*IpCa_multiplier;
      case sex == 2{dimensionless}:
        IbarSLCaP_b*1.28{dimensionless}*IpCa_multiplier;
      otherwise:
        IbarSLCaP_b*IpCa_multiplier;
    endsel;
    IpCa_junc = Fjunc*pow(Q10SLCaP, Qpow)*IbarSLCaP*pow(caj, 1.6{dimensionless})/(pow(KmPCa, 1.6{dimensionless})+pow(caj, 1.6{dimensionless}));
    IpCa_sl = Fsl*pow(Q10SLCaP, Qpow)*IbarSLCaP*pow(casl, 1.6{dimensionless})/(pow(KmPCa, 1.6{dimensionless})+pow(casl, 1.6{dimensionless}));
    IpCa = IpCa_junc+IpCa_sl;
  enddef;

  def comp ryr as
    var time: millisecond {pub: in};
    var casr: millimolar {pub: in};
    var caj: millimolar {pub: in};
    var ICaL_junc: microA_per_microF {pub: in};
    var camk_f_RyR: dimensionless {pub: in};
    var Jrel_multiplier: dimensionless {pub: in};
    var ks: per_millisecond;
    var koCa: dimensionless {init: 23.87221};
    var kom: per_millisecond {init: 0.16219};
    var kiCa: dimensionless {init: 0.39871};
    var kim: per_millisecond {init: 0.04311};
    var ec50SR: millimolar {init: 0.75385};
    var steepnessCaSR: dimensionless {init: 5.09473};
    var caExpFactor: dimensionless {init: 0.68655};
    var caTransFactor: per_millisecond {init: 0.94428};
    var caExpFactor2: dimensionless {init: 2.06273};
    var caTransFactor2: per_millisecond {init: 0.52967};
    var directRelMidpoint: millimolar {init: 0.95271};
    var bt: millisecond {init: 12.4767};
    var a_rel: dimensionless;
    var ICaL_junc_positive: microA_per_microF;
    var ICaL_junc_sigmoided: dimensionless;
    var Jrel_inf: dimensionless;
    var tau_rel: millisecond;
    var jrel_icaldep_act: millimolar_per_millisecond {init: -9.23949112019061e-15};
    var tauInact: millisecond {init: 64.11202};
    var Jrel_inact_inf: dimensionless;
    var jrel_icaldep_f1: dimensionless {init: 0.999994847409611};
    var tauInact2: millisecond {init: 119.48978};
    var Jrel_inact_inf2: dimensionless;
    var jrel_icaldep_f2: dimensionless {init: 0.998725931920675};
    var Jrel_ICaLdep: millimolar_per_millisecond;
    var MaxSR: dimensionless {init: 15};
    var MinSR: dimensionless {init: 1};
    var kCaSR: dimensionless;
    var koSRCa: dimensionless;
    var kiSRCa: dimensionless;
    var ecCaI: millimolar {init: 1e-3};
    var steepnessCaI: dimensionless {init: 5.93447};
    var minCaI: dimensionless {init: 0.93249};
    var maxCaI: dimensionless {init: 30.13294};
    var baseRateCaI: per_millisecond {init: 3.0232e-04};
    var sigmoidBaseCaI: dimensionless;
    var RI_to_CI: per_millisecond;
    var CI_to_RI: per_millisecond {init: 2.48e-3};
    var RIcleft: dimensionless;
    var ryr_R: dimensionless {init: 0.821525956842405};
    var ryr_O: dimensionless {init: 3.33929041065479e-8};
    var ryr_I: dimensionless {init: 4.57362306340243e-9};
    var ryr_CaRI: dimensionless {init: 0.0653313479138348};
    var J_SRCarel_np: millimolar_per_millisecond;
    var caTransFactor2p: per_millisecond;
    var RIcleft_p: dimensionless;
    var ryr_R_p: dimensionless {init: 0.8216639452872};
    var ryr_O_p: dimensionless {init: 5.00978004918837e-8};
    var ryr_I_p: dimensionless {init: 6.8611892649539e-9};
    var ryr_CaRI_p: dimensionless {init: 0.0651828099424919};
    var J_SRCarel_p: millimolar_per_millisecond;
    var J_SRCarel: millimolar_per_millisecond {pub: out};
    var nonlinearModifier: dimensionless;
    var CaMKIILeakMultiplier: dimensionless;
    var J_SRleak: millimolar_per_millisecond {pub: out};
    ks = Jrel_multiplier*26.6{per_millisecond};
    a_rel = 1.25{dimensionless}*bt/1{millisecond};
    ICaL_junc_positive = abs(ICaL_junc);
    ICaL_junc_sigmoided = 1{dimensionless}-1{dimensionless}/(1{dimensionless}+pow(ICaL_junc_positive/0.45{microA_per_microF}, 4.5{dimensionless}));
    Jrel_inf = a_rel*ICaL_junc_sigmoided/(1.0{dimensionless}+pow(directRelMidpoint/casr, 7.72672{dimensionless}));
    tau_rel = max(bt/(1.0{dimensionless}+0.0123{millimolar}/casr), 0.001{millisecond});
    ode(jrel_icaldep_act, time) = (Jrel_inf-jrel_icaldep_act)/tau_rel;
    Jrel_inact_inf = 1{dimensionless}/(1{dimensionless}+ICaL_junc_sigmoided/1e-3{dimensionless});
    ode(jrel_icaldep_f1, time) = (Jrel_inact_inf-jrel_icaldep_f1)/tauInact;
    Jrel_inact_inf2 = 1{dimensionless}/(1{dimensionless}+ICaL_junc_sigmoided/6e-4{dimensionless});
    ode(jrel_icaldep_f2, time) = (Jrel_inact_inf2-jrel_icaldep_f2)/tauInact2;
    Jrel_ICaLdep = 0.00174{millimolar_per_millisecond}*jrel_icaldep_act*jrel_icaldep_f1*jrel_icaldep_f2;
    kCaSR = MaxSR-(MaxSR-MinSR)/(1{dimensionless}+pow(ec50SR/casr, steepnessCaSR));
    koSRCa = koCa/kCaSR;
    kiSRCa = kiCa*kCaSR;
    sigmoidBaseCaI = minCaI+(maxCaI-minCaI)/(1{dimensionless}+pow(ecCaI/caj, steepnessCaI));
    RI_to_CI = baseRateCaI*sigmoidBaseCaI;
    RIcleft = 1{dimensionless}-ryr_R-ryr_O-ryr_I-ryr_CaRI;
    ode(ryr_R, time) = kim*RIcleft-kiSRCa*caTransFactor*pow(caj/1{millimolar}, caExpFactor)*ryr_R-(caTransFactor2*koSRCa*pow(caj/1{millimolar}, caExpFactor2)*ryr_R-kom*ryr_O);
    ode(ryr_O, time) = caTransFactor2*koSRCa*pow(caj/1{millimolar}, caExpFactor2)*ryr_R-kom*ryr_O-(kiSRCa*caTransFactor*pow(caj/1{millimolar}, caExpFactor)*ryr_O-kim*ryr_I);
    ode(ryr_I, time) = kiSRCa*caTransFactor*pow(caj/1{millimolar}, caExpFactor)*ryr_O-kim*ryr_I-(kom*ryr_I-caTransFactor2*koSRCa*pow(caj/1{millimolar}, caExpFactor2)*RIcleft);
    ode(ryr_CaRI, time) = RI_to_CI*RIcleft-CI_to_RI*ryr_CaRI;
    J_SRCarel_np = ks*ryr_O*(casr-caj)+Jrel_ICaLdep;
    caTransFactor2p = caTransFactor2*1.5{dimensionless};
    RIcleft_p = 1{dimensionless}-ryr_R_p-ryr_O_p-ryr_I_p-ryr_CaRI_p;
    ode(ryr_R_p, time) = kim*RIcleft_p-kiSRCa*caTransFactor*pow(caj/1{millimolar}, caExpFactor)*ryr_R_p-(caTransFactor2p*koSRCa*pow(caj/1{millimolar}, caExpFactor2)*ryr_R_p-kom*ryr_O_p);
    ode(ryr_O_p, time) = caTransFactor2*koSRCa*pow(caj/1{millimolar}, caExpFactor2)*ryr_R_p-kom*ryr_O_p-(kiSRCa*caTransFactor*pow(caj/1{millimolar}, caExpFactor)*ryr_O_p-kim*ryr_I_p);
    ode(ryr_I_p, time) = kiSRCa*caTransFactor*pow(caj/1{millimolar}, caExpFactor)*ryr_O_p-kim*ryr_I_p-(kom*ryr_I_p-caTransFactor2p*koSRCa*pow(caj/1{millimolar}, caExpFactor2)*RIcleft_p);
    ode(ryr_CaRI_p, time) = RI_to_CI*RIcleft_p-CI_to_RI*ryr_CaRI_p;
    J_SRCarel_p = ks*ryr_O_p*(casr-caj)+Jrel_ICaLdep;
    J_SRCarel = J_SRCarel_p*camk_f_RyR+J_SRCarel_np*(1{dimensionless}-camk_f_RyR);
    nonlinearModifier = 0.2144{dimensionless}*exp(1.83{per_millimolar}*casr);
    CaMKIILeakMultiplier = 1{dimensionless}+2{dimensionless}*camk_f_RyR;
    J_SRleak = 1.59306e-6{per_millisecond}*(casr-caj)*nonlinearModifier*CaMKIILeakMultiplier;
  enddef;

  def comp SERCA as
    var celltype: dimensionless {pub: in};
    var Qpow: dimensionless {pub: in};
    var camk_f_PLB: dimensionless {pub: in};
    var fPLB_PKA: dimensionless {pub: in};
    var cai: millimolar {pub: in};
    var casr: millimolar {pub: in};
    var casig_SERCA_act: millimolar {pub: in};
    var Q10SRCaP: dimensionless {init: 2.6};
    var Vmax_SRCaP_b: millimolar_per_millisecond {init: 5.43e-3};
    var Jup_multiplier: dimensionless {pub: in};
    var Vmax_SRCaP: millimolar_per_millisecond;
    var Kmr: millimolar {init: 2.31442};
    var hillSRCaP: dimensionless {init: 1.02809};
    var Kmf: millimolar {init: 3.0672e-04};
    var phosphorylationTotal: dimensionless;
    var Kmf_p: millimolar;
    var Km_SERCA_Ca: millimolar {init: 0.4};
    var Max_Vmax_SERCA_Ca: dimensionless {init: 1.11142};
    var Vmax_mult: dimensionless;
    var Jserca_np: millimolar_per_millisecond;
    var Jserca_p: millimolar_per_millisecond;
    var Jserca: millimolar_per_millisecond {pub: out};
    Vmax_SRCaP = sel
      case celltype == 1{dimensionless}:
        1.2{dimensionless}*Vmax_SRCaP_b*Jup_multiplier;
      otherwise:
        Vmax_SRCaP_b*Jup_multiplier;
    endsel;
    phosphorylationTotal = camk_f_PLB+fPLB_PKA-camk_f_PLB*fPLB_PKA;
    Kmf_p = Kmf*0.5{dimensionless};
    Vmax_mult = 1{dimensionless}+Max_Vmax_SERCA_Ca/(1{dimensionless}+sqr(Km_SERCA_Ca/casig_SERCA_act));
    Jserca_np = pow(Q10SRCaP, Qpow)*Vmax_SRCaP*Vmax_mult*(pow(cai/Kmf, hillSRCaP)-pow(casr/Kmr, hillSRCaP))/(1{dimensionless}+pow(cai/Kmf, hillSRCaP)+pow(casr/Kmr, hillSRCaP));
    Jserca_p = pow(Q10SRCaP, Qpow)*Vmax_SRCaP*Vmax_mult*(pow(cai/Kmf_p, hillSRCaP)-pow(casr/Kmr, hillSRCaP))/(1{dimensionless}+pow(cai/Kmf_p, hillSRCaP)+pow(casr/Kmr, hillSRCaP));
    Jserca = Jserca_np*(1{dimensionless}-phosphorylationTotal)+Jserca_p*phosphorylationTotal;
  enddef;

  def comp contraction as
    var time: millisecond {pub: in};
    var cai: millimolar {pub: in};
    var fTnI_PKA: dimensionless {pub: in};
    var fMyBPC_PKA: dimensionless {pub: in};
    var fracTnIpo: dimensionless {init: 0.0031};
    var fPKA_TnI: dimensionless;
    var PKAForceMultiplier: dimensionless;
    var perm50: dimensionless {init: 0.35};
    var TRPN_n: dimensionless {init: 1.65};
    var koff: per_millisecond {init: 0.07854};
    var dr: dimensionless {init: 0.25};
    var wfrac: dimensionless {init: 0.5};
    var TOT_A: dimensionless {init: 25};
    var ktm_unblock: dimensionless {init: 0.02626};
    var beta_0: dimensionless {init: 2.3};
    var beta_1: dimensionless {init: -2.4};
    var gamma: dimensionless {init: 0.0085};
    var gamma_wu: dimensionless {init: 0.615};
    var phi: dimensionless {init: 2.23};
    var nperm: dimensionless {init: 2.036};
    var ca50: dimensionless;
    var Tref: kilopascal {init: 80};
    var nu: dimensionless {init: 10.15996};
    var mu: dimensionless {init: 3.94046};
    var k_ws: dimensionless;
    var k_uw: dimensionless;
    var k_wu: dimensionless;
    var k_su: dimensionless;
    var lambda: dimensionless {init: 1};
    var lambda_min: dimensionless {init: 0.87};
    var lambda_max: dimensionless {init: 1.2};
    var lambda0: dimensionless;
    var lambda_rate: per_millisecond {init: 0};
    var cdw: dimensionless;
    var cds: dimensionless;
    var A: dimensionless;
    var Lfac: dimensionless;
    var XU: dimensionless;
    var contraction_TmBlocked: dimensionless {init: 0.992378492940848};
    var contraction_XW: dimensionless {init: 0.00285370717430549};
    var contraction_XS: dimensionless {init: 0.00191507884532543};
    var xb_ws: dimensionless;
    var xb_uw: dimensionless;
    var xb_wu: dimensionless;
    var xb_su: dimensionless;
    var contraction_ZETAS: dimensionless {init: 0};
    var gamma_rate: dimensionless;
    var xb_su_gamma: dimensionless;
    var gamma_rate_w: dimensionless;
    var contraction_ZETAW: dimensionless {init: 0};
    var xb_wu_gamma: dimensionless;
    var contraction_Ca_TRPN: dimensionless {init: 0.0319778784167468};
    var d_contraction_Ca_TRPN: per_millisecond {pub: out};
    var XSSS: dimensionless;
    var XWSS: dimensionless;
    var ktm_block: dimensionless;
    var Ta: kilopascal;
    fPKA_TnI = 1.45{dimensionless}-0.45{dimensionless}*(1{dimensionless}-fTnI_PKA)/(1{dimensionless}-fracTnIpo);
    PKAForceMultiplier = 1.0{dimensionless}+0.26{dimensionless}*fMyBPC_PKA;
    k_ws = 0.004{dimensionless}*(1{dimensionless}+fMyBPC_PKA/2{dimensionless})*mu;
    k_uw = 0.026{dimensionless}*nu;
    cdw = phi*k_uw*(1{dimensionless}-wfrac)/wfrac;
    cds = phi*k_ws*wfrac*(1{dimensionless}-dr)/dr;
    k_wu = k_uw*(1{dimensionless}/wfrac-1{dimensionless})-k_ws;
    k_su = k_ws*(1{dimensionless}/dr-1{dimensionless})*wfrac;
    A = TOT_A*dr/((1{dimensionless}-dr)*wfrac+dr);
    lambda0 = min(lambda_max, lambda);
    Lfac = max(0{dimensionless}, 1{dimensionless}+beta_0*(lambda0+min(lambda_min, lambda0)-(1{dimensionless}+lambda_min)));
    XU = 1{dimensionless}-contraction_TmBlocked-contraction_XW-contraction_XS;
    xb_ws = k_ws*contraction_XW;
    xb_uw = k_uw*XU*(1.0{dimensionless}+fMyBPC_PKA/2{dimensionless});
    xb_wu = k_wu*contraction_XW;
    xb_su = k_su*contraction_XS;
    gamma_rate = sel
      case contraction_ZETAS > 0{dimensionless}:
        gamma*contraction_ZETAS;
      case contraction_ZETAS < -1{dimensionless}:
        gamma*(-contraction_ZETAS-1{dimensionless});
      otherwise:
        0.0{dimensionless};
    endsel;
    xb_su_gamma = gamma_rate*contraction_XS;
    gamma_rate_w = gamma_wu*abs(contraction_ZETAW);
    xb_wu_gamma = gamma_rate_w*contraction_XW;
    ode(contraction_XS, time) = xb_ws-xb_su-xb_su_gamma;
    ode(contraction_XW, time) = xb_uw-xb_wu-xb_ws-xb_wu_gamma;
    ca50 = fPKA_TnI*0.7645{dimensionless}+beta_1*min(0.2{dimensionless}, lambda-1{dimensionless});
    d_contraction_Ca_TRPN = koff*(pow(cai*1000{per_millimolar}/ca50, TRPN_n)*(1{dimensionless}-contraction_Ca_TRPN)-contraction_Ca_TRPN);
    ode(contraction_Ca_TRPN, time) = d_contraction_Ca_TRPN;
    XSSS = dr*0.5{dimensionless};
    XWSS = (1{dimensionless}-dr)*wfrac*0.5{dimensionless};
    ktm_block = ktm_unblock*pow(perm50, nperm)*0.5{dimensionless}/(0.5{dimensionless}-XSSS-XWSS);
    ode(contraction_TmBlocked, time) = ktm_block*min(100{dimensioness}, pow(contraction_Ca_TRPN, -nperm/2{dimensionless}))*XU-ktm_unblock*pow(contraction_Ca_TRPN, nperm/2{dimensionless})*contraction_TmBlocked;
    ode(contraction_ZETAS, time) = A*lambda_rate-cds*contraction_ZETAS;
    ode(contraction_ZETAW, time) = A*lambda_rate-cdw*contraction_ZETAW;
    Ta = Lfac*PKAForceMultiplier*Tref/dr*((contraction_ZETAS+1{dimensionless})*contraction_XS+contraction_ZETAW*contraction_XW);
  enddef;

  def comp PKA as
    var fINa_PKA: dimensionless {init: 0, pub: out};
    var fICaL_PKA: dimensionless {init: 0, pub: out};
    var fINaK_PKA: dimensionless {init: 0, pub: out};
    var fIKs_PKA: dimensionless {init: 0, pub: out};
    var fPLB_PKA: dimensionless {init: 0, pub: out};
    var fTnI_PKA: dimensionless {init: 0, pub: out};
    var fMyBPC_PKA: dimensionless {init: 0, pub: out};
  enddef;
  def map between intracellular_ions and membrane for
    vars Cmem and Cmem;
    vars Istim and Istim;
    vars I_tot and I_tot;
  enddef;
  def map between membrane and physical_constants for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between intracellular_ions and physical_constants for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between CaMK and environment for
    vars time and time;
  enddef;
  def map between reversal_potentials and physical_constants for
    vars R and R;
    vars T and T;
    vars F and F;
    vars zna and zna;
    vars zca and zca;
    vars zk and zk;
    vars zcl and zcl;
  enddef;
  def map between intracellular_ions and CaMK for
    vars caj and caj;
  enddef;
  def map between intracellular_ions and cell_geometry for
    vars vmyo and vmyo;
    vars vjunc and vjunc;
    vars vsl and vsl;
    vars vsr and vsr;
  enddef;
  def map between intracellular_ions and environment for
    vars time and time;
    vars sex and sex;
  enddef;
  def map between intracellular_ions and reversal_potentials for
    vars nai and nai;
    vars naj and naj;
    vars nasl and nasl;
    vars caj and caj;
    vars casl and casl;
    vars ki and ki;
    vars cli and cli;
  enddef;
  def map between extracellular and reversal_potentials for
    vars nao and nao;
    vars cao and cao;
    vars ko and ko;
    vars clo and clo;
  enddef;
  def map between membrane and INa for
    vars v and v;
    vars Fjunc and Fjunc;
    vars Fsl and Fsl;
  enddef;
  def map between INa and environment for
    vars time and time;
  enddef;
  def map between reversal_potentials and INa for
    vars ENaj and ENaj;
    vars ENasl and ENasl;
  enddef;
  def map between intracellular_ions and INa for
    vars INaj and INaj;
    vars INasl and INasl;
  enddef;
  def map between INa and CaMK for
    vars camk_f_RyR and camk_f_RyR;
  enddef;
  def map between INaL and membrane for
    vars v and v;
    vars Fjunc and Fjunc;
    vars Fsl and Fsl;
  enddef;
  def map between INaL and reversal_potentials for
    vars ENaj and ENaj;
    vars ENasl and ENasl;
  enddef;
  def map between INaL and environment for
    vars celltype and celltype;
    vars time and time;
  enddef;
  def map between intracellular_ions and INaL for
    vars INaLj and INaLj;
    vars INaLsl and INaLsl;
  enddef;
  def map between INaL and CaMK for
    vars camk_f_RyR and camk_f_RyR;
  enddef;
  def map between ICaL and environment for
    vars celltype and celltype;
    vars time and time;
  enddef;
  def map between membrane and ICaL for
    vars v and v;
    vars vffrt and vffrt;
    vars vfrt and vfrt;
  enddef;
  def map between ICaL and CaMK for
    vars camk_f_ICaL and camk_f_ICaL;
  enddef;
  def map between physical_constants and ICaL for
    vars T and T;
  enddef;
  def map between intracellular_ions and ICaL for
    vars cai and cai;
    vars casl and casl;
    vars caj and caj;
    vars nai and nai;
    vars nasl and nasl;
    vars ki and ki;
    vars cli and cli;
    vars ICaL_junc and ICaL_junc;
    vars ICaL_sl and ICaL_sl;
    vars ICaNa_junc and ICaNa_junc;
    vars ICaNa_sl and ICaNa_sl;
    vars ICaK and ICaK;
  enddef;
  def map between extracellular and ICaL for
    vars nao and nao;
    vars ko and ko;
    vars cao and cao;
    vars clo and clo;
  enddef;
  def map between Ito and membrane for
    vars v and v;
  enddef;
  def map between Ito and environment for
    vars time and time;
    vars celltype and celltype;
  enddef;
  def map between Ito and reversal_potentials for
    vars EK and EK;
  enddef;
  def map between intracellular_ions and Ito for
    vars Ito and Ito;
  enddef;
  def map between Ito and CaMK for
    vars camk_f_RyR and camk_f_RyR;
  enddef;
  def map between IKr and membrane for
    vars v and v;
    vars vfrt and vfrt;
  enddef;
  def map between IKr and environment for
    vars celltype and celltype;
    vars sex and sex;
    vars time and time;
  enddef;
  def map between reversal_potentials and IKr for
    vars EK and EK;
  enddef;
  def map between extracellular and IKr for
    vars ko and ko;
  enddef;
  def map between intracellular_ions and IKr for
    vars IKr and IKr;
  enddef;
  def map between IKs and membrane for
    vars v and v;
    vars Fjunc and Fjunc;
    vars Fsl and Fsl;
  enddef;
  def map between IKs and environment for
    vars celltype and celltype;
    vars sex and sex;
    vars time and time;
  enddef;
  def map between IKs and reversal_potentials for
    vars EKs and EKs;
  enddef;
  def map between intracellular_ions and IKs for
    vars caj and caj;
    vars casl and casl;
    vars IKs and IKs;
  enddef;
  def map between IK1 and membrane for
    vars v and v;
  enddef;
  def map between IK1 and environment for
    vars celltype and celltype;
    vars sex and sex;
  enddef;
  def map between IK1 and reversal_potentials for
    vars EK and EK;
  enddef;
  def map between extracellular and IK1 for
    vars ko and ko;
  enddef;
  def map between intracellular_ions and IK1 for
    vars IK1 and IK1;
  enddef;
  def map between INaCa and membrane for
    vars v and v;
  enddef;
  def map between INaCa and environment for
    vars celltype and celltype;
    vars sex and sex;
  enddef;
  def map between INaCa and physical_constants for
    vars zna and zna;
    vars zca and zca;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between intracellular_ions and INaCa for
    vars nai and nai;
    vars nasl and nasl;
    vars cai and cai;
    vars casl and casl;
    vars caj and caj;
    vars INaCa_i and INaCa_i;
    vars INaCa_ss and INaCa_ss;
  enddef;
  def map between extracellular and INaCa for
    vars nao and nao;
    vars cao and cao;
  enddef;
  def map between intracellular_ions and INaK for
    vars naj and naj;
    vars nasl and nasl;
    vars INaK and INaK;
    vars INaKj and INaKj;
    vars INaKsl and INaKsl;
  enddef;
  def map between INaK and membrane for
    vars v and v;
    vars Fjunc and Fjunc;
    vars Fsl and Fsl;
  enddef;
  def map between extracellular and INaK for
    vars nao and nao;
    vars ko and ko;
  enddef;
  def map between reversal_potentials and INab for
    vars ENaj and ENaj;
    vars ENasl and ENasl;
  enddef;
  def map between membrane and INab for
    vars v and v;
    vars Fjunc and Fjunc;
    vars Fsl and Fsl;
  enddef;
  def map between INab and intracellular_ions for
    vars INabj and INabj;
    vars INabsl and INabsl;
  enddef;
  def map between reversal_potentials and ICab for
    vars ECaj and ECaj;
    vars ECasl and ECasl;
  enddef;
  def map between membrane and ICab for
    vars v and v;
    vars Fjunc and Fjunc;
    vars Fsl and Fsl;
  enddef;
  def map between ICab and intracellular_ions for
    vars ICab_junc and ICab_junc;
    vars ICab_sl and ICab_sl;
  enddef;
  def map between IKb and membrane for
    vars v and v;
  enddef;
  def map between IKb and reversal_potentials for
    vars EK and EK;
  enddef;
  def map between intracellular_ions and IKb for
    vars IKb and IKb;
  enddef;
  def map between reversal_potentials and ICl for
    vars ECl and ECl;
  enddef;
  def map between intracellular_ions and ICl for
    vars caj and caj;
    vars casl and casl;
    vars IClCa and IClCa;
    vars IClb and IClb;
  enddef;
  def map between membrane and ICl for
    vars v and v;
    vars Fjunc and Fjunc;
    vars Fsl and Fsl;
  enddef;
  def map between environment and IpCa for
    vars sex and sex;
  enddef;
  def map between IpCa and membrane for
    vars Fjunc and Fjunc;
    vars Fsl and Fsl;
  enddef;
  def map between intracellular_ions and IpCa for
    vars caj and caj;
    vars casl and casl;
    vars IpCa_junc and IpCa_junc;
    vars IpCa_sl and IpCa_sl;
  enddef;
  def map between physical_constants and IpCa for
    vars Qpow and Qpow;
  enddef;
  def map between intracellular_ions and ryr for
    vars casr and casr;
    vars caj and caj;
    vars J_SRCarel and J_SRCarel;
    vars J_SRleak and J_SRleak;
  enddef;
  def map between ICaL and ryr for
    vars ICaL_junc and ICaL_junc;
  enddef;
  def map between ryr and CaMK for
    vars camk_f_RyR and camk_f_RyR;
  enddef;
  def map between ryr and environment for
    vars time and time;
  enddef;
  def map between intracellular_ions and SERCA for
    vars cai and cai;
    vars casr and casr;
    vars Jserca and Jserca;
  enddef;
  def map between SERCA and environment for
    vars celltype and celltype;
  enddef;
  def map between SERCA and CaMK for
    vars casig_SERCA_act and casig_SERCA_act;
    vars camk_f_PLB and camk_f_PLB;
  enddef;
  def map between physical_constants and SERCA for
    vars Qpow and Qpow;
  enddef;
  def map between contraction and intracellular_ions for
    vars cai and cai;
    vars d_contraction_Ca_TRPN and d_contraction_Ca_TRPN;
  enddef;
  def map between contraction and environment for
    vars time and time;
  enddef;
  def map between PKA and INa for
    vars fINa_PKA and fINa_PKA;
  enddef;
  def map between PKA and ICaL for
    vars fICaL_PKA and fICaL_PKA;
  enddef;
  def map between PKA and INaK for
    vars fINaK_PKA and fINaK_PKA;
  enddef;
  def map between PKA and IKs for
    vars fIKs_PKA and fIKs_PKA;
  enddef;
  def map between PKA and SERCA for
    vars fPLB_PKA and fPLB_PKA;
  enddef;
  def map between PKA and contraction for
    vars fTnI_PKA and fTnI_PKA;
  enddef;
  def map between PKA and contraction for
    vars fMyBPC_PKA and fMyBPC_PKA;
  enddef;
  def map between multipliers and INa for
    vars INa_multiplier and INa_multiplier;
  enddef;
  def map between multipliers and INaL for
    vars INaL_multiplier and INaL_multiplier;
  enddef;
  def map between multipliers and INaK for
    vars INaK_multiplier and INaK_multiplier;
  enddef;
  def map between multipliers and INab for
    vars INab_multiplier and INab_multiplier;
  enddef;
  def map between multipliers and ICl for
    vars IClCa_multiplier and IClCa_multiplier;
    vars IClb_multiplier and IClb_multiplier;
  enddef;
  def map between multipliers and Ito for
    vars Itos_multiplier and Itos_multiplier;
    vars Itof_multiplier and Itof_multiplier;
  enddef;
  def map between multipliers and IKb for
    vars IKb_multiplier and IKb_multiplier;
  enddef;
  def map between multipliers and ICaL for
    vars ICaLPCa_multiplier and ICaLPCa_multiplier;
  enddef;
  def map between multipliers and ICab for
    vars ICab_multiplier and ICab_multiplier;
  enddef;
  def map between multipliers and ryr for
    vars Jrel_multiplier and Jrel_multiplier;
  enddef;
  def map between multipliers and SERCA for
    vars Jup_multiplier and Jup_multiplier;
  enddef;
  def map between multipliers and INaCa for
    vars INaCa_multiplier and INaCa_multiplier;
  enddef;
  def map between multipliers and IKr for
    vars IKr_multiplier and IKr_multiplier;
  enddef;
  def map between multipliers and IKs for
    vars IKs_multiplier and IKs_multiplier;
  enddef;
  def map between multipliers and IK1 for
    vars IK1_multiplier and IK1_multiplier;
  enddef;
  def map between multipliers and IpCa for
    vars IpCa_multiplier and IpCa_multiplier;
  enddef;
enddef;
// #membrane_atp_dependent_potassium_current_conductance
// is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_atp_dependent_potassium_current_conductance
// modifiable-parameter: yes
// #membrane_atp_dependent_potassium_current
// is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_atp_dependent_potassium_current
// #membrane_fast_sodium_current_conductance
// modifiable-parameter: yes
// is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_conductance
// is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_conductance
// #membrane_persistent_sodium_current_conductance
// modifiable-parameter: yes
// is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_persistent_sodium_current_conductance
// #membrane_transient_outward_current_conductance
// modifiable-parameter: yes
// is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current_conductance
// is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current_conductance
// #membrane_L_type_calcium_current_conductance
// is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_conductance
// modifiable-parameter: yes
// is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_conductance
// modifiable-parameter: yes
// #membrane_rapid_delayed_rectifier_potassium_current_conductance
// modifiable-parameter: yes
// is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current_conductance
// is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current_conductance
// #membrane_slow_delayed_rectifier_potassium_current_conductance
// modifiable-parameter: yes
// is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current_conductance
// is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current_conductance
// #membrane_inward_rectifier_potassium_current_conductance
// modifiable-parameter: yes
// is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current_conductance
// is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current_conductance
// #membrane_sodium_calcium_exchanger_current_conductance
// modifiable-parameter: yes
// is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current_conductance
// is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current_conductance
// #membrane_sodium_potassium_pump_current_permeability
// modifiable-parameter: yes
// is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_potassium_pump_current_permeability
// #SR_uptake_current_max
// modifiable-parameter: yes
// is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_uptake_current_max
// modifiable-parameter: yes
// is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_uptake_current_max
// #time
// is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time
// #extracellular_sodium_concentration
// is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_sodium_concentration
// #extracellular_calcium_concentration
// is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_calcium_concentration
// #extracellular_potassium_concentration
// is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_potassium_concentration
// #membrane_voltage
// is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage
// #membrane_stimulus_current
// is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current
// #membrane_stimulus_current_offset
// is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_offset
// #membrane_stimulus_current_amplitude
// is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_amplitude
// #membrane_stimulus_current_period
// is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_period
// #membrane_stimulus_current_duration
// is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_duration
// #aCaMK_var
// modifiable-parameter: yes
// #CaMKo_var
// modifiable-parameter: yes
// #cytosolic_sodium_concentration
// is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_sodium_concentration
// #cytosolic_potassium_concentration
// is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_potassium_concentration
// #cytosolic_calcium_concentration
// is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_concentration
// #membrane_fast_sodium_current
// is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current
// #membrane_persistent_sodium_current
// is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_persistent_sodium_current
// #membrane_transient_outward_current
// is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current
// #membrane_L_type_calcium_current
// is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current
// #membrane_rapid_delayed_rectifier_potassium_current
// is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current
// #membrane_slow_delayed_rectifier_potassium_current
// is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current
// #membrane_inward_rectifier_potassium_current
// is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current
// #membrane_sodium_potassium_pump_current
// is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_potassium_pump_current
// #membrane_calcium_pump_current
// is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_calcium_pump_current
// #SR_release_current
// is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current
// #SR_release_current_max
// modifiable-parameter: yes
// is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current_max
// #SR_uptake_current
// is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_uptake_current
